PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'gender': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = consonanceEXP_final_final_qhrtkqhs
  keyboardBackend = ioHub
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Routines
  Routine trial
    RoutineSettingsComponent trial
      saveStartStop = False
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        chord_list=[]
        thisExp.addData("background", background)
      End Routine:
        for i in range(40):
            condition_list[0][i][0][0]
            condition_list[0][i][0][1]
            condition_list[0][i][0][2]
            condition_list[0][i][0][3]
            condition_list[0][i][1][0]
            condition_list[0][i][1][1]
            condition_list[0][i][1][2]
            condition_list[0][i][1][3]
            chord_list.append(condition_list[0][i][0][0])
            chord_list.append(condition_list[0][i][0][1])
            chord_list.append(condition_list[0][i][0][2])
            chord_list.append(condition_list[0][i][0][3])
            chord_list.append(condition_list[0][i][1][0])
            chord_list.append(condition_list[0][i][1][1])
            chord_list.append(condition_list[0][i][1][2])
            chord_list.append(condition_list[0][i][1][3])


        thisExp.addData("chord_list", chord_list)
    SoundComponent tar
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 0.62
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent sound1
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][0][0]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_2
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][0][1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_3
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][0][2]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_4
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][0][3]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_5
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][1][0]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_6
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][1][1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_7
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][1][2]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_8
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][1][3]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][0][0]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_2
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][0][1]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_3
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][0][2]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_4
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][0][3]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_5
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][1][0]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_6
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][1][1]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_7
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][1][2]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_8
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][1][3]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound3
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][2][0][0]
      startVal [time (s)] = $starttime[1]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound3_2
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][2][0][1]
      startVal [time (s)] = $starttime[1]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound3_3
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][2][0][2]
      startVal [time (s)] = $starttime[1]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound3_4
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][2][0][3]
      startVal [time (s)] = $starttime[1]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound3_5
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][2][1][0]
      startVal [time (s)] = $starttime[1]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound3_6
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][2][1][1]
      startVal [time (s)] = $starttime[1]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound4
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][3][0][0]
      startVal [time (s)] = $starttime[2]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound5
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][4][0][0]
      startVal [time (s)] = $starttime[3]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound6
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][5][0][0]
      startVal [time (s)] = $starttime[4]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound7
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][6][0][0]
      startVal [time (s)] = $starttime[5]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound8
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][7][0][0]
      startVal [time (s)] = $starttime[6]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound9
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][8][0][0]
      startVal [time (s)] = $starttime[7]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound10
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][9][0][0]
      startVal [time (s)] = $starttime[8]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound11
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][10][0][0]
      startVal [time (s)] = $starttime[9]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound12
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][11][0][0]
      startVal [time (s)] = $starttime[10]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound13
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][12][0][0]
      startVal [time (s)] = $starttime[11]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent spund16
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][0][0]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_2
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][0][1]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_3
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][0][2]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_4
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][0][3]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_5
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][1][0]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_6
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][1][1]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_7
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][1][2]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_8
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][1][3]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    KeyboardComponent key_resp_3
      allowedKeys = 'l','s'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    SoundComponent tar_2
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 0.68
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_3
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 0.74
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_4
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 0.80
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_5
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 0.86
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_6
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 0.92
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_7
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 0.98
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_8
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 1.04
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_9
      sound [set every repeat] = $target
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_10
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 1.16
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_11
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 1.22
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_12
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 1.28
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_13
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 1.34
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_14
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 1.4
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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
    SoundComponent tar_24
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_31
      sound [set every repeat] = $target
      startVal [time (s)] = 2.42
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    PolygonComponent polygon_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      units = deg
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  Routine break_3
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        breakTrials = [47, 95, 143, 191, 239]

        if trials.thisN not in breakTrials:
            continueRoutine = False
    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
                            One block has finished.

                           Please take a short break.

        When you are ready to continue, press the spacebar to start the next block.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine feed
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        for i in range(1,7):
            globals()[f'c_lo{i}'] = ["wav\E4.wav", "wav\G4.wav", "wav\C5.wav", "wav\E5.wav", "wav\G5.wav","wav\C6.wav"]
            globals()[f'c_up{i}'] =["wav\E6.wav", "wav\G6.wav", "wav\C7.wav", "wav\E7.wav", "wav\G7.wav"]
            globals()[f'd_lo{i}'] =["wav\D4.wav", "wav\D5.wav","wav\D6.wav","wav\F4.wav", "wav\F5.wav", "wav\A4.wav","wav\A5.wav"]
            globals()[f'd_up{i}'] =["wav\D7.wav", "wav\F6.wav", "wav\F7.wav", "wav\A6.wav", "wav\A7.wav"]
            globals()[f'e_lo{i}'] =["wav\E4.wav", "wav\E5.wav", "wav\G4.wav", "wav\G5.wav", "wav\B4.wav", "wav\B5.wav"]
            globals()[f'e_up{i}'] =["wav\E6.wav", "wav\E7.wav", "wav\G6.wav", "wav\G7.wav","wav\B6.wav"]
            globals()[f'f_lo{i}'] =["wav\F4.wav", "wav\F5.wav", "wav\A4.wav", "wav\A5.wav", "wav\C5.wav", "wav\C6.wav"]
            globals()[f'f_up{i}'] =["wav\F6.wav", "wav\F7.wav", "wav\A6.wav", "wav\A7.wav", "wav\C7.wav"]
            globals()[f'g_lo{i}'] =["wav\G4.wav", "wav\G5.wav", "wav\B4.wav", "wav\B5.wav", "wav\D4.wav", "wav\D5.wav", "wav\D6.wav"]
            globals()[f'g_up{i}'] =["wav\G6.wav", "wav\G7.wav","wav\B6.wav", "wav\D7.wav"]
            globals()[f'a_lo{i}'] =["wav\A4.wav", "wav\A5.wav", "wav\C5.wav", "wav\C6.wav", "wav\E4.wav", "wav\E5.wav"]
            globals()[f'a_up{i}'] =["wav\A6.wav", "wav\A7.wav",  "wav\C7.wav", "wav\E6.wav", "wav\E7.wav"]
            globals()[f'b_lo{i}'] =["wav\D4.wav", "wav\D5.wav", "wav\D6.wav", "wav\F4.wav", "wav\F5.wav", "wav\B4.wav", "wav\B5.wav"]
            globals()[f'b_up{i}'] =["wav\D7.wav", "wav\F6.wav","wav\F7.wav", "wav\B6.wav"]

        for i in range(1,41):
            globals()[f'dis_lo{i}'] = ["wav\D4.wav","wav\E4.wav","wav\F#4.wav","wav\G#4.wav","wav\A#4.wav","wav\C5.wav", "wav\D5.wav","wav\E5.wav","wav\F#5.wav","wav\G#5.wav","wav\A#5.wav", "wav\C6.wav", "wav\D6.wav"]
            globals()[f'dis_up{i}'] = ["wav\E6.wav","wav\F#6.wav","wav\G#6.wav","wav\A#6.wav", "wav\C7.wav", "wav\D7.wav","wav\E7.wav","wav\F#7.wav","wav\G#7.wav","wav\A#7.wav"]

        c=[c_lo1,c_up1]
        d=[d_lo1,d_up1]
        e=[e_lo1,e_up1]
        f=[f_lo1,f_up1]
        g=[g_lo1,g_up1]
        a=[a_lo1,a_up1]
        b=[b_lo1,b_up1]
        c2=[c_lo2,c_up2]
        d2=[d_lo2,d_up2]
        e2=[e_lo2,e_up2]
        f2=[f_lo2,f_up2]
        g2=[g_lo2,g_up2]
        a2=[a_lo2,a_up2]
        b2=[b_lo2,b_up2]
        c3=[c_lo3,c_up3]
        d3=[d_lo3,d_up3]
        e3=[e_lo3,e_up3]
        f3=[f_lo3,f_up3]
        g3=[g_lo3,g_up3]
        a3=[a_lo3,a_up3]
        b3=[b_lo3,b_up3]
        c4=[c_lo4,c_up4]
        d4=[d_lo4,d_up4]
        e4=[e_lo4,e_up4]
        f4=[f_lo4,f_up4]
        g4=[g_lo4,g_up4]
        a4=[a_lo4,a_up4]
        b4=[b_lo4,b_up4]
        c5=[c_lo5,c_up5]
        d5=[d_lo5,d_up5]
        e5=[e_lo5,e_up5]
        f5=[f_lo5,f_up5]
        g5=[g_lo5,g_up5]
        a5=[a_lo5,a_up5]
        b5=[b_lo5,b_up5]
        c6=[c_lo6,c_up6]
        d6=[d_lo6,d_up6]
        e6=[e_lo6,e_up6]
        f6=[f_lo6,f_up6]
        g6=[g_lo6,g_up6]
        a6=[a_lo6,a_up6]
        b6=[b_lo6,b_up6]
        dis=[dis_lo1,dis_up1]
        dis2=[dis_lo2,dis_up2]
        dis3=[dis_lo3,dis_up3]
        dis4=[dis_lo4,dis_up4]
        dis5=[dis_lo5,dis_up5]
        dis6=[dis_lo6,dis_up6]
        dis7=[dis_lo7,dis_up7]
        dis8=[dis_lo8,dis_up8]
        dis9=[dis_lo9,dis_up9]
        dis10=[dis_lo10,dis_up10]
        dis11=[dis_lo11,dis_up11]
        dis12=[dis_lo12,dis_up12]
        dis13=[dis_lo13,dis_up13]
        dis14=[dis_lo14,dis_up14]
        dis15=[dis_lo15,dis_up15]
        dis16=[dis_lo16,dis_up16]
        dis17=[dis_lo17,dis_up17]
        dis18=[dis_lo18,dis_up18]
        dis19=[dis_lo19,dis_up19]
        dis20=[dis_lo20,dis_up20]
        dis21=[dis_lo21,dis_up21]
        dis22=[dis_lo22,dis_up22]
        dis23=[dis_lo23,dis_up23]
        dis24=[dis_lo24,dis_up24]
        dis25=[dis_lo25,dis_up25]
        dis26=[dis_lo26,dis_up26]
        dis27=[dis_lo27,dis_up27]
        dis28=[dis_lo28,dis_up28]
        dis29=[dis_lo29,dis_up29]
        dis30=[dis_lo30,dis_up30]
        dis31=[dis_lo31,dis_up31]
        dis32=[dis_lo32,dis_up32]
        dis33=[dis_lo33,dis_up33]
        dis34=[dis_lo34,dis_up34]
        dis35=[dis_lo35,dis_up35]
        dis36=[dis_lo36,dis_up36]
        dis37=[dis_lo37,dis_up37]
        dis38=[dis_lo38,dis_up38]
        dis39=[dis_lo39,dis_up39]
        dis40=[dis_lo40,dis_up40]
        con_list=[c,d,e,f,g,a,b, c2,d2,e2,f2,g2,a2,b2,c3,d3,e3,f3,g3,a3,b3, c4,d4,e4,f4,g4,a4,b4, c5,d5,e5,f5,g5,a5,b5, c6,d6,e6,f6,g6,a6,b6]
        dis_list=[dis, dis2, dis3, dis4, dis5, dis6, dis7, dis8,dis9,dis10, dis11, dis12,dis13, dis14,dis15,dis16,dis17,dis18, dis19,dis20,dis21,dis22,dis23,dis24,dis25,dis26,dis27,dis28,dis29,dis30,dis31,dis32,dis33,dis34,dis35,dis36,dis37,dis38,dis39,dis40]
        condition_list=[con_list, dis_list]
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine blank
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine exp_ins
    RoutineSettingsComponent exp_ins
      saveStartStop = False
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    CodeComponent code_5
      Code Type = Py
      Begin Experiment:
        target_level=0.18442980837259

        for i in range(1,7):
            globals()[f'c_lo{i}'] = ["wav\E4.wav", "wav\G4.wav", "wav\C5.wav", "wav\E5.wav", "wav\G5.wav","wav\C6.wav"]
            globals()[f'c_up{i}'] =["wav\E6.wav", "wav\G6.wav", "wav\C7.wav", "wav\E7.wav", "wav\G7.wav"]
            globals()[f'd_lo{i}'] =["wav\D4.wav", "wav\D5.wav","wav\D6.wav","wav\F4.wav", "wav\F5.wav", "wav\A4.wav","wav\A5.wav"]
            globals()[f'd_up{i}'] =["wav\D7.wav", "wav\F6.wav", "wav\F7.wav", "wav\A6.wav", "wav\A7.wav"]
            globals()[f'e_lo{i}'] =["wav\E4.wav", "wav\E5.wav", "wav\G4.wav", "wav\G5.wav", "wav\B4.wav", "wav\B5.wav"]
            globals()[f'e_up{i}'] =["wav\E6.wav", "wav\E7.wav", "wav\G6.wav", "wav\G7.wav","wav\B6.wav"]
            globals()[f'f_lo{i}'] =["wav\F4.wav", "wav\F5.wav", "wav\A4.wav", "wav\A5.wav", "wav\C5.wav", "wav\C6.wav"]
            globals()[f'f_up{i}'] =["wav\F6.wav", "wav\F7.wav", "wav\A6.wav", "wav\A7.wav", "wav\C7.wav"]
            globals()[f'g_lo{i}'] =["wav\G4.wav", "wav\G5.wav", "wav\B4.wav", "wav\B5.wav", "wav\D4.wav", "wav\D5.wav", "wav\D6.wav"]
            globals()[f'g_up{i}'] =["wav\G6.wav", "wav\G7.wav","wav\B6.wav", "wav\D7.wav"]
            globals()[f'a_lo{i}'] =["wav\A4.wav", "wav\A5.wav", "wav\C5.wav", "wav\C6.wav", "wav\E4.wav", "wav\E5.wav"]
            globals()[f'a_up{i}'] =["wav\A6.wav", "wav\A7.wav",  "wav\C7.wav", "wav\E6.wav", "wav\E7.wav"]
            globals()[f'b_lo{i}'] =["wav\D4.wav", "wav\D5.wav", "wav\D6.wav", "wav\F4.wav", "wav\F5.wav", "wav\B4.wav", "wav\B5.wav"]
            globals()[f'b_up{i}'] =["wav\D7.wav", "wav\F6.wav","wav\F7.wav", "wav\B6.wav"]

        for i in range(1,41):
            globals()[f'dis_lo{i}'] = ["wav\D4.wav","wav\E4.wav","wav\F#4.wav","wav\G#4.wav","wav\A#4.wav","wav\C5.wav", "wav\D5.wav","wav\E5.wav","wav\F#5.wav","wav\G#5.wav","wav\A#5.wav", "wav\C6.wav", "wav\D6.wav"]
            globals()[f'dis_up{i}'] = ["wav\E6.wav","wav\F#6.wav","wav\G#6.wav","wav\A#6.wav", "wav\C7.wav", "wav\D7.wav","wav\E7.wav","wav\F#7.wav","wav\G#7.wav","wav\A#7.wav"]

        c=[c_lo1,c_up1]
        d=[d_lo1,d_up1]
        e=[e_lo1,e_up1]
        f=[f_lo1,f_up1]
        g=[g_lo1,g_up1]
        a=[a_lo1,a_up1]
        b=[b_lo1,b_up1]
        c2=[c_lo2,c_up2]
        d2=[d_lo2,d_up2]
        e2=[e_lo2,e_up2]
        f2=[f_lo2,f_up2]
        g2=[g_lo2,g_up2]
        a2=[a_lo2,a_up2]
        b2=[b_lo2,b_up2]
        c3=[c_lo3,c_up3]
        d3=[d_lo3,d_up3]
        e3=[e_lo3,e_up3]
        f3=[f_lo3,f_up3]
        g3=[g_lo3,g_up3]
        a3=[a_lo3,a_up3]
        b3=[b_lo3,b_up3]
        c4=[c_lo4,c_up4]
        d4=[d_lo4,d_up4]
        e4=[e_lo4,e_up4]
        f4=[f_lo4,f_up4]
        g4=[g_lo4,g_up4]
        a4=[a_lo4,a_up4]
        b4=[b_lo4,b_up4]
        c5=[c_lo5,c_up5]
        d5=[d_lo5,d_up5]
        e5=[e_lo5,e_up5]
        f5=[f_lo5,f_up5]
        g5=[g_lo5,g_up5]
        a5=[a_lo5,a_up5]
        b5=[b_lo5,b_up5]
        c6=[c_lo6,c_up6]
        d6=[d_lo6,d_up6]
        e6=[e_lo6,e_up6]
        f6=[f_lo6,f_up6]
        g6=[g_lo6,g_up6]
        a6=[a_lo6,a_up6]
        b6=[b_lo6,b_up6]
        dis=[dis_lo1,dis_up1]
        dis2=[dis_lo2,dis_up2]
        dis3=[dis_lo3,dis_up3]
        dis4=[dis_lo4,dis_up4]
        dis5=[dis_lo5,dis_up5]
        dis6=[dis_lo6,dis_up6]
        dis7=[dis_lo7,dis_up7]
        dis8=[dis_lo8,dis_up8]
        dis9=[dis_lo9,dis_up9]
        dis10=[dis_lo10,dis_up10]
        dis11=[dis_lo11,dis_up11]
        dis12=[dis_lo12,dis_up12]
        dis13=[dis_lo13,dis_up13]
        dis14=[dis_lo14,dis_up14]
        dis15=[dis_lo15,dis_up15]
        dis16=[dis_lo16,dis_up16]
        dis17=[dis_lo17,dis_up17]
        dis18=[dis_lo18,dis_up18]
        dis19=[dis_lo19,dis_up19]
        dis20=[dis_lo20,dis_up20]
        dis21=[dis_lo21,dis_up21]
        dis22=[dis_lo22,dis_up22]
        dis23=[dis_lo23,dis_up23]
        dis24=[dis_lo24,dis_up24]
        dis25=[dis_lo25,dis_up25]
        dis26=[dis_lo26,dis_up26]
        dis27=[dis_lo27,dis_up27]
        dis28=[dis_lo28,dis_up28]
        dis29=[dis_lo29,dis_up29]
        dis30=[dis_lo30,dis_up30]
        dis31=[dis_lo31,dis_up31]
        dis32=[dis_lo32,dis_up32]
        dis33=[dis_lo33,dis_up33]
        dis34=[dis_lo34,dis_up34]
        dis35=[dis_lo35,dis_up35]
        dis36=[dis_lo36,dis_up36]
        dis37=[dis_lo37,dis_up37]
        dis38=[dis_lo38,dis_up38]
        dis39=[dis_lo39,dis_up39]
        dis40=[dis_lo40,dis_up40]

        starttime=[0.56,0.62, 0.68, 0.74, 0.80, 0.86, 0.92, 0.98, 1.04, 1.1, 1.16, 1.22,1.28,1.34,1.4,1.46,1.52,1.58,1.64, 1.7, 1.76, 1.82, 1.88, 1.94, 2, 2.06, 2.12,2.18, 2.24,2.3,2.36,2.42,2.48,2.54,2.6,2.66,2.72,2.78,2.84]
        con_list=[c,d,e,f,g,a,b, c2,d2,e2,f2,g2,a2,b2,c3,d3,e3,f3,g3,a3,b3, c4,d4,e4,f4,g4,a4,b4, c5,d5,e5,f5,g5,a5,b5, c6,d6,e6,f6,g6,a6,b6]
        dis_list=[dis, dis2, dis3, dis4, dis5, dis6, dis7, dis8,dis9,dis10, dis11, dis12,dis13, dis14,dis15,dis16,dis17,dis18, dis19,dis20,dis21,dis22,dis23,dis24,dis25,dis26,dis27,dis28,dis29,dis30,dis31,dis32,dis33,dis34,dis35,dis36,dis37,dis38,dis39,dis40]
        condition_list=[con_list, dis_list]
    TextComponent text_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
              This is the main experiment.

        If there is a target (a repeating tone) among the chords, press <S>,

           If there is no target (no repeating tone), press <L>.

             Press the spacebar to begin.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        The experiment is now complete.

        Thank you for your participation.
    CodeComponent code_3
      Code Type = Py
  Routine pra_ins
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    TextComponent text_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
            본 실험의 연습 시행을 진행합니다.

        여러 화음 중 표적(반복되는 음)이 있다면 < S >키,

        표적(반복되는 음)이 없다면 < L >키를 눌러주세요.

         연습 시행을 시작하려면 <스페이스바>를 눌러주세요.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine blank_2
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    CodeComponent code_7
      Code Type = Py
      Begin Experiment:
        target_level=0.3
      Begin Routine:
        breaks=[15]
        if trials_3.thisN in breaks:
            trials_3.finished = True
    TextComponent text_10
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine pra_feed
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    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        if key_resp_3.corr==1:
            message='correct'
        elif key_resp_3.corr==0:
            message='incorrect'

        for i in range(40):
            condition_list[0][i][0][0]
            condition_list[0][i][0][1]
            condition_list[0][i][0][2]
            condition_list[0][i][0][3]
            condition_list[0][i][1][0]
            condition_list[0][i][1][1]
            condition_list[0][i][1][2]
            condition_list[0][i][1][3]
            chord_list.append(condition_list[0][i][0][0])
            chord_list.append(condition_list[0][i][0][1])
            chord_list.append(condition_list[0][i][0][2])
            chord_list.append(condition_list[0][i][0][3])
            chord_list.append(condition_list[0][i][1][0])
            chord_list.append(condition_list[0][i][1][1])
            chord_list.append(condition_list[0][i][1][2])
            chord_list.append(condition_list[0][i][1][3])


        thisExp.addData("chord_list", chord_list)
      End Routine:
        if target== "wav\C7.wav":
            c_upper.append("wav\C7.wav")
            f_upper.append("wav\C7.wav")
            a_upper.append("wav\C7.wav")
            c_upper2.append("wav\C7.wav")
            f_upper2.append("wav\C7.wav")
            a_upper2.append("wav\C7.wav")
            c_upper3.append("wav\C7.wav")
            f_upper3.append("wav\C7.wav")
            a_upper3.append("wav\C7.wav")
            c_upper4.append("wav\C7.wav")
            f_upper4.append("wav\C7.wav")
            a_upper4.append("wav\C7.wav")
            c_upper5.append("wav\C7.wav")
            f_upper5.append("wav\C7.wav")
            a_upper5.append("wav\C7.wav")
            c_upper6.append("wav\C7.wav")
            f_upper6.append("wav\C7.wav")
            a_upper6.append("wav\C7.wav")
            disone_upper.append("wav\C7.wav")
            disone_upper2.append("wav\C7.wav")
            disone_upper3.append("wav\C7.wav")
            disone_upper4.append("wav\C7.wav")
            disone_upper5.append("wav\C7.wav")
            disone_upper6.append("wav\C7.wav")
            disone_upper7.append("wav\C7.wav")
            disone_upper8.append("wav\C7.wav")
            disone_upper9.append("wav\C7.wav")
            disone_upper10.append("wav\C7.wav")
            disone_upper11.append("wav\C7.wav")
            disone_upper12.append("wav\C7.wav")
            disone_upper13.append("wav\C7.wav")
            disone_upper14.append("wav\C7.wav")
            disone_upper15.append("wav\C7.wav")
            disone_upper16.append("wav\C7.wav")
            disone_upper17.append("wav\C7.wav")
            disone_upper18.append("wav\C7.wav")
            disone_upper19.append("wav\C7.wav")
            disone_upper20.append("wav\C7.wav")
            disone_upper21.append("wav\C7.wav")
            disone_upper22.append("wav\C7.wav")
            disone_upper23.append("wav\C7.wav")
            disone_upper24.append("wav\C7.wav")
            disone_upper25.append("wav\C7.wav")
            disone_upper26.append("wav\C7.wav")
            disone_upper27.append("wav\C7.wav")
            disone_upper28.append("wav\C7.wav")
            disone_upper29.append("wav\C7.wav")
            disone_upper30.append("wav\C7.wav")
            disone_upper31.append("wav\C7.wav")
            disone_upper32.append("wav\C7.wav")
            disone_upper33.append("wav\C7.wav")
            disone_upper34.append("wav\C7.wav")
            disone_upper35.append("wav\C7.wav")
            disone_upper36.append("wav\C7.wav")
            disone_upper37.append("wav\C7.wav")
            disone_upper38.append("wav\C7.wav")
            disone_upper39.append("wav\C7.wav")
            disone_upper40.append("wav\C7.wav")
        elif target== "wav\D7.wav":
            g_lower.append(g_upper[-1])
            g_upper.remove(g_upper[-1])
            g_upper.append("wav\D7.wav")
            b_lower.append(b_upper[-1])
            b_upper.remove(b_upper[-1])
            b_upper.append("wav\D7.wav")
            disone_upper.append("wav\D7.wav")
            g_lower2.append(g_upper2[-1])
            g_upper2.remove(g_upper2[-1])
            g_upper2.append("wav\D7.wav")
            b_lower2.append(b_upper2[-1])
            b_upper2.remove(b_upper2[-1])
            b_upper2.append("wav\D7.wav")
            disone_upper2.append("wav\D7.wav")
            g_lower3.append(g_upper3[-1])
            g_upper3.remove(g_upper3[-1])
            g_upper3.append("wav\D7.wav")
            b_lower3.append(b_upper3[-1])
            b_upper3.remove(b_upper3[-1])
            b_upper3.append("wav\D7.wav")
            disone_upper3.append("wav\D7.wav")
            g_lower4.append(g_upper4[-1])
            g_upper4.remove(g_upper4[-1])
            g_upper4.append("wav\D7.wav")
            b_lower4.append(b_upper4[-1])
            b_upper4.remove(b_upper4[-1])
            b_upper4.append("wav\D7.wav")
            disone_upper4.append("wav\D7.wav")
            g_lower5.append(g_upper5[-1])
            g_upper5.remove(g_upper5[-1])
            g_upper5.append("wav\D7.wav")
            b_lower5.append(b_upper5[-1])
            b_upper5.remove(b_upper5[-1])
            b_upper5.append("wav\D7.wav")
            disone_upper5.append("wav\D7.wav")
            g_lower6.append(g_upper6[-1])
            g_upper6.remove(g_upper6[-1])
            g_upper6.append("wav\D7.wav")
            b_lower6.append(b_upper6[-1])
            b_upper6.remove(b_upper6[-1])
            b_upper6.append("wav\D7.wav")
            disone_upper6.append("wav\D7.wav")
            disone_upper7.append("wav\D7.wav")
            disone_upper8.append("wav\D7.wav")
            disone_upper9.append("wav\D7.wav")
            disone_upper10.append("wav\D7.wav")
            disone_upper11.append("wav\D7.wav")
            disone_upper12.append("wav\D7.wav")
            disone_upper13.append("wav\D7.wav")
            disone_upper14.append("wav\D7.wav")
            disone_upper15.append("wav\D7.wav")
            disone_upper16.append("wav\D7.wav")
            disone_upper17.append("wav\D7.wav")
            disone_upper18.append("wav\D7.wav")
            disone_upper19.append("wav\D7.wav")
            disone_upper20.append("wav\D7.wav")
            disone_upper21.append("wav\D7.wav")
            disone_upper22.append("wav\D7.wav")
            disone_upper23.append("wav\D7.wav")
            disone_upper24.append("wav\D7.wav")
            disone_upper25.append("wav\D7.wav")
            disone_upper26.append("wav\D7.wav")
            disone_upper27.append("wav\D7.wav")
            disone_upper28.append("wav\D7.wav")
            disone_upper29.append("wav\D7.wav")
            disone_upper30.append("wav\D7.wav")
            disone_upper31.append("wav\D7.wav")
            disone_upper32.append("wav\D7.wav")
            disone_upper33.append("wav\D7.wav")
            disone_upper34.append("wav\D7.wav")
            disone_upper35.append("wav\D7.wav")
            disone_upper36.append("wav\D7.wav")
            disone_upper37.append("wav\D7.wav")
            disone_upper38.append("wav\D7.wav")
            disone_upper39.append("wav\D7.wav")
            disone_upper40.append("wav\D7.wav")
            d_upper.append("wav\D7.wav")
            d_upper2.append("wav\D7.wav")
            d_upper3.append("wav\D7.wav")
            d_upper4.append("wav\D7.wav")
            d_upper5.append("wav\D7.wav")
            d_upper6.append("wav\D7.wav")
    TextComponent text_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $message
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  Routine bre
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        import random
        random.shuffle(c_lo1)
        random.shuffle(d_lo1)
        random.shuffle(e_lo1)
        random.shuffle(f_lo1)
        random.shuffle(g_lo1)
        random.shuffle(a_lo1)
        random.shuffle(c_up1)
        random.shuffle(d_up1)
        random.shuffle(e_up1)
        random.shuffle(f_up1)
        random.shuffle(g_up1)
        random.shuffle(a_up1)
        random.shuffle(b_lo1)
        random.shuffle(b_up1)
        random.shuffle(dis_lo1)
        random.shuffle(dis_up1)
        random.shuffle(c_lo2)
        random.shuffle(d_lo2)
        random.shuffle(e_lo2)
        random.shuffle(f_lo2)
        random.shuffle(g_lo2)
        random.shuffle(a_lo2)
        random.shuffle(c_up2)
        random.shuffle(d_up2)
        random.shuffle(e_up2)
        random.shuffle(f_up2)
        random.shuffle(g_up2)
        random.shuffle(a_up2)
        random.shuffle(b_lo2)
        random.shuffle(b_up2)
        random.shuffle(dis_lo2)
        random.shuffle(dis_up2)
        random.shuffle(c_lo3)
        random.shuffle(d_lo3)
        random.shuffle(e_lo3)
        random.shuffle(f_lo3)
        random.shuffle(g_lo3)
        random.shuffle(a_lo3)
        random.shuffle(c_up3)
        random.shuffle(d_up3)
        random.shuffle(e_up3)
        random.shuffle(f_up3)
        random.shuffle(g_up3)
        random.shuffle(a_up3)
        random.shuffle(b_lo3)
        random.shuffle(b_up3)
        random.shuffle(dis_lo3)
        random.shuffle(dis_up3)
        random.shuffle(c_lo4)
        random.shuffle(d_lo4)
        random.shuffle(e_lo4)
        random.shuffle(f_lo4)
        random.shuffle(g_lo4)
        random.shuffle(a_lo4)
        random.shuffle(c_up4)
        random.shuffle(d_up4)
        random.shuffle(e_up4)
        random.shuffle(f_up4)
        random.shuffle(g_up4)
        random.shuffle(a_up4)
        random.shuffle(b_lo4)
        random.shuffle(b_up4)
        random.shuffle(dis_lo4)
        random.shuffle(dis_up4)
        random.shuffle(c_lo5)
        random.shuffle(d_lo5)
        random.shuffle(e_lo5)
        random.shuffle(f_lo5)
        random.shuffle(g_lo5)
        random.shuffle(a_lo5)
        random.shuffle(c_up5)
        random.shuffle(d_up5)
        random.shuffle(e_up5)
        random.shuffle(f_up5)
        random.shuffle(g_up5)
        random.shuffle(a_up5)
        random.shuffle(b_lo5)
        random.shuffle(b_up5)
        random.shuffle(dis_lo5)
        random.shuffle(dis_up5)
        random.shuffle(c_lo6)
        random.shuffle(d_lo6)
        random.shuffle(e_lo6)
        random.shuffle(f_lo6)
        random.shuffle(g_lo6)
        random.shuffle(a_lo6)
        random.shuffle(c_up6)
        random.shuffle(d_up6)
        random.shuffle(e_up6)
        random.shuffle(f_up6)
        random.shuffle(g_up6)
        random.shuffle(a_up6)
        random.shuffle(b_lo6)
        random.shuffle(b_up6)
        random.shuffle(dis_lo6)
        random.shuffle(dis_up6)
        random.shuffle(dis_lo7)
        random.shuffle(dis_up7)
        random.shuffle(dis_lo8)
        random.shuffle(dis_up8)
        random.shuffle(dis_lo9)
        random.shuffle(dis_up9)
        random.shuffle(dis_lo10)
        random.shuffle(dis_up10)
        random.shuffle(dis_lo11)
        random.shuffle(dis_up11)
        random.shuffle(dis_lo12)
        random.shuffle(dis_up12)
        random.shuffle(dis_lo13)
        random.shuffle(dis_up13)
        random.shuffle(dis_lo14)
        random.shuffle(dis_up14)
        random.shuffle(dis_lo15)
        random.shuffle(dis_up15)
        random.shuffle(dis_lo16)
        random.shuffle(dis_up16)
        random.shuffle(dis_lo17)
        random.shuffle(dis_up17)
        random.shuffle(dis_lo18)
        random.shuffle(dis_up18)
        random.shuffle(dis_lo19)
        random.shuffle(dis_up19)
        random.shuffle(dis_lo20)
        random.shuffle(dis_up20)
        random.shuffle(dis_lo21)
        random.shuffle(dis_up21)
        random.shuffle(dis_lo22)
        random.shuffle(dis_up22)
        random.shuffle(dis_lo23)
        random.shuffle(dis_up23)
        random.shuffle(dis_lo24)
        random.shuffle(dis_up24)
        random.shuffle(dis_lo26)
        random.shuffle(dis_up26)
        random.shuffle(dis_lo25)
        random.shuffle(dis_up25)
        random.shuffle(dis_lo27)
        random.shuffle(dis_up27)
        random.shuffle(dis_lo28)
        random.shuffle(dis_up28)
        random.shuffle(dis_lo29)
        random.shuffle(dis_up29)
        random.shuffle(dis_lo30)
        random.shuffle(dis_up30)
        random.shuffle(dis_lo31)
        random.shuffle(dis_up31)
        random.shuffle(dis_lo32)
        random.shuffle(dis_up32)
        random.shuffle(dis_lo33)
        random.shuffle(dis_up33)
        random.shuffle(dis_lo34)
        random.shuffle(dis_up34)
        random.shuffle(dis_lo35)
        random.shuffle(dis_up35)
        random.shuffle(dis_lo36)
        random.shuffle(dis_up36)
        random.shuffle(dis_lo37)
        random.shuffle(dis_up37)
        random.shuffle(dis_lo38)
        random.shuffle(dis_up38)
        random.shuffle(dis_lo39)
        random.shuffle(dis_up39)
        random.shuffle(dis_lo40)
        random.shuffle(dis_up40)
        random.shuffle(con_list)
        random.shuffle(dis_list)
        random.shuffle(condition_list)
        random.shuffle(starttime)

        if background=='con':
            condition_list[0] = con_list
        elif background=='dis':
            condition_list[0] = dis_list
        if figure==0:
            tarvolume=0
        elif figure==1:
            tarvolume=target_level
        thisExp.addData("tarvolume", tarvolume)
        if target== "wav\C7.wav":
            c_up1.remove("wav\C7.wav")
            f_up1.remove("wav\C7.wav")
            a_up1.remove("wav\C7.wav")
            dis_up1.remove("wav\C7.wav")
            c_up2.remove("wav\C7.wav")
            f_up2.remove("wav\C7.wav")
            a_up2.remove("wav\C7.wav")
            dis_up2.remove("wav\C7.wav")
            c_up3.remove("wav\C7.wav")
            f_up3.remove("wav\C7.wav")
            a_up3.remove("wav\C7.wav")
            dis_up3.remove("wav\C7.wav")
            c_up4.remove("wav\C7.wav")
            f_up4.remove("wav\C7.wav")
            a_up4.remove("wav\C7.wav")
            dis_up4.remove("wav\C7.wav")
            c_up5.remove("wav\C7.wav")
            f_up5.remove("wav\C7.wav")
            a_up5.remove("wav\C7.wav")
            dis_up5.remove("wav\C7.wav")
            c_up6.remove("wav\C7.wav")
            f_up6.remove("wav\C7.wav")
            a_up6.remove("wav\C7.wav")
            dis_up6.remove("wav\C7.wav")
            dis_up7.remove("wav\C7.wav")
            dis_up8.remove("wav\C7.wav")
            dis_up9.remove("wav\C7.wav")
            dis_up10.remove("wav\C7.wav")
            dis_up11.remove("wav\C7.wav")
            dis_up12.remove("wav\C7.wav")
            dis_up13.remove("wav\C7.wav")
            dis_up14.remove("wav\C7.wav")
            dis_up15.remove("wav\C7.wav")
            dis_up16.remove("wav\C7.wav")
            dis_up17.remove("wav\C7.wav")
            dis_up18.remove("wav\C7.wav")
            dis_up19.remove("wav\C7.wav")
            dis_up20.remove("wav\C7.wav")
            dis_up21.remove("wav\C7.wav")
            dis_up22.remove("wav\C7.wav")
            dis_up23.remove("wav\C7.wav")
            dis_up24.remove("wav\C7.wav")
            dis_up25.remove("wav\C7.wav")
            dis_up26.remove("wav\C7.wav")
            dis_up27.remove("wav\C7.wav")
            dis_up28.remove("wav\C7.wav")
            dis_up29.remove("wav\C7.wav")
            dis_up30.remove("wav\C7.wav")
            dis_up31.remove("wav\C7.wav")
            dis_up32.remove("wav\C7.wav")
            dis_up33.remove("wav\C7.wav")
            dis_up34.remove("wav\C7.wav")
            dis_up35.remove("wav\C7.wav")
            dis_up36.remove("wav\C7.wav")
            dis_up37.remove("wav\C7.wav")
            dis_up38.remove("wav\C7.wav")
            dis_up39.remove("wav\C7.wav")
            dis_up40.remove("wav\C7.wav")
        elif target== "wav\C5.wav":
            c_lo1.remove("wav\C5.wav")
            f_lo1.remove("wav\C5.wav")
            a_lo1.remove("wav\C5.wav")
            dis_lo1.remove("wav\C5.wav")
            c_lo2.remove("wav\C5.wav")
            f_lo2.remove("wav\C5.wav")
            a_lo2.remove("wav\C5.wav")
            dis_lo2.remove("wav\C5.wav")
            c_lo3.remove("wav\C5.wav")
            f_lo3.remove("wav\C5.wav")
            a_lo3.remove("wav\C5.wav")
            dis_lo3.remove("wav\C5.wav")
            c_lo4.remove("wav\C5.wav")
            f_lo4.remove("wav\C5.wav")
            a_lo4.remove("wav\C5.wav")
            dis_lo4.remove("wav\C5.wav")
            c_lo5.remove("wav\C5.wav")
            f_lo5.remove("wav\C5.wav")
            a_lo5.remove("wav\C5.wav")
            dis_lo5.remove("wav\C5.wav")
            c_lo6.remove("wav\C5.wav")
            f_lo6.remove("wav\C5.wav")
            a_lo6.remove("wav\C5.wav")
            dis_lo6.remove("wav\C5.wav")
            dis_lo7.remove("wav\C5.wav")
            dis_lo8.remove("wav\C5.wav")
            dis_lo9.remove("wav\C5.wav")
            dis_lo10.remove("wav\C5.wav")
            dis_lo11.remove("wav\C5.wav")
            dis_lo12.remove("wav\C5.wav")
            dis_lo13.remove("wav\C5.wav")
            dis_lo14.remove("wav\C5.wav")
            dis_lo15.remove("wav\C5.wav")
            dis_lo16.remove("wav\C5.wav")
            dis_lo17.remove("wav\C5.wav")
            dis_lo18.remove("wav\C5.wav")
            dis_lo19.remove("wav\C5.wav")
            dis_lo20.remove("wav\C5.wav")
            dis_lo21.remove("wav\C5.wav")
            dis_lo22.remove("wav\C5.wav")
            dis_lo23.remove("wav\C5.wav")
            dis_lo24.remove("wav\C5.wav")
            dis_lo25.remove("wav\C5.wav")
            dis_lo26.remove("wav\C5.wav")
            dis_lo27.remove("wav\C5.wav")
            dis_lo28.remove("wav\C5.wav")
            dis_lo29.remove("wav\C5.wav")
            dis_lo30.remove("wav\C5.wav")
            dis_lo31.remove("wav\C5.wav")
            dis_lo32.remove("wav\C5.wav")
            dis_lo33.remove("wav\C5.wav")
            dis_lo34.remove("wav\C5.wav")
            dis_lo35.remove("wav\C5.wav")
            dis_lo36.remove("wav\C5.wav")
            dis_lo37.remove("wav\C5.wav")
            dis_lo38.remove("wav\C5.wav")
            dis_lo39.remove("wav\C5.wav")
            dis_lo40.remove("wav\C5.wav")
        elif target== "wav\C6.wav":
            c_lo1.remove("wav\C6.wav")
            f_lo1.remove("wav\C6.wav")
            a_lo1.remove("wav\C6.wav")
            dis_lo1.remove("wav\C6.wav")
            c_lo2.remove("wav\C6.wav")
            f_lo2.remove("wav\C6.wav")
            a_lo2.remove("wav\C6.wav")
            dis_lo2.remove("wav\C6.wav")
            c_lo3.remove("wav\C6.wav")
            f_lo3.remove("wav\C6.wav")
            a_lo3.remove("wav\C6.wav")
            dis_lo3.remove("wav\C6.wav")
            c_lo4.remove("wav\C6.wav")
            f_lo4.remove("wav\C6.wav")
            a_lo4.remove("wav\C6.wav")
            dis_lo4.remove("wav\C6.wav")
            c_lo5.remove("wav\C6.wav")
            f_lo5.remove("wav\C6.wav")
            a_lo5.remove("wav\C6.wav")
            dis_lo5.remove("wav\C6.wav")
            c_lo6.remove("wav\C6.wav")
            f_lo6.remove("wav\C6.wav")
            a_lo6.remove("wav\C6.wav")
            dis_lo6.remove("wav\C6.wav")
            dis_lo7.remove("wav\C6.wav")
            dis_lo8.remove("wav\C6.wav")
            dis_lo9.remove("wav\C6.wav")
            dis_lo10.remove("wav\C6.wav")
            dis_lo11.remove("wav\C6.wav")
            dis_lo12.remove("wav\C6.wav")
            dis_lo13.remove("wav\C6.wav")
            dis_lo14.remove("wav\C6.wav")
            dis_lo15.remove("wav\C6.wav")
            dis_lo16.remove("wav\C6.wav")
            dis_lo17.remove("wav\C6.wav")
            dis_lo18.remove("wav\C6.wav")
            dis_lo19.remove("wav\C6.wav")
            dis_lo20.remove("wav\C6.wav")
            dis_lo21.remove("wav\C6.wav")
            dis_lo22.remove("wav\C6.wav")
            dis_lo23.remove("wav\C6.wav")
            dis_lo24.remove("wav\C6.wav")
            dis_lo25.remove("wav\C6.wav")
            dis_lo26.remove("wav\C6.wav")
            dis_lo27.remove("wav\C6.wav")
            dis_lo28.remove("wav\C6.wav")
            dis_lo29.remove("wav\C6.wav")
            dis_lo30.remove("wav\C6.wav")
            dis_lo31.remove("wav\C6.wav")
            dis_lo32.remove("wav\C6.wav")
            dis_lo33.remove("wav\C6.wav")
            dis_lo34.remove("wav\C6.wav")
            dis_lo35.remove("wav\C6.wav")
            dis_lo36.remove("wav\C6.wav")
            dis_lo37.remove("wav\C6.wav")
            dis_lo38.remove("wav\C6.wav")
            dis_lo39.remove("wav\C6.wav")
            dis_lo40.remove("wav\C6.wav")
        elif target== "wav\D5.wav":
            d_lo1.remove("wav\D5.wav")
            g_lo1.remove("wav\D5.wav")
            b_lo1.remove("wav\D5.wav")
            dis_lo1.remove("wav\D5.wav")
            d_lo2.remove("wav\D5.wav")
            g_lo2.remove("wav\D5.wav")
            b_lo2.remove("wav\D5.wav")
            dis_lo2.remove("wav\D5.wav")
            d_lo3.remove("wav\D5.wav")
            g_lo3.remove("wav\D5.wav")
            b_lo3.remove("wav\D5.wav")
            dis_lo3.remove("wav\D5.wav")
            d_lo4.remove("wav\D5.wav")
            g_lo4.remove("wav\D5.wav")
            b_lo4.remove("wav\D5.wav")
            dis_lo4.remove("wav\D5.wav")
            d_lo5.remove("wav\D5.wav")
            g_lo5.remove("wav\D5.wav")
            b_lo5.remove("wav\D5.wav")
            dis_lo5.remove("wav\D5.wav")
            d_lo6.remove("wav\D5.wav")
            g_lo6.remove("wav\D5.wav")
            b_lo6.remove("wav\D5.wav")
            dis_lo6.remove("wav\D5.wav")
            dis_lo7.remove("wav\D5.wav")
            dis_lo8.remove("wav\D5.wav")
            dis_lo9.remove("wav\D5.wav")
            dis_lo10.remove("wav\D5.wav")
            dis_lo11.remove("wav\D5.wav")
            dis_lo12.remove("wav\D5.wav")
            dis_lo13.remove("wav\D5.wav")
            dis_lo14.remove("wav\D5.wav")
            dis_lo15.remove("wav\D5.wav")
            dis_lo16.remove("wav\D5.wav")
            dis_lo17.remove("wav\D5.wav")
            dis_lo18.remove("wav\D5.wav")
            dis_lo19.remove("wav\D5.wav")
            dis_lo20.remove("wav\D5.wav")
            dis_lo21.remove("wav\D5.wav")
            dis_lo22.remove("wav\D5.wav")
            dis_lo23.remove("wav\D5.wav")
            dis_lo24.remove("wav\D5.wav")
            dis_lo25.remove("wav\D5.wav")
            dis_lo26.remove("wav\D5.wav")
            dis_lo27.remove("wav\D5.wav")
            dis_lo28.remove("wav\D5.wav")
            dis_lo29.remove("wav\D5.wav")
            dis_lo30.remove("wav\D5.wav")
            dis_lo31.remove("wav\D5.wav")
            dis_lo32.remove("wav\D5.wav")
            dis_lo33.remove("wav\D5.wav")
            dis_lo34.remove("wav\D5.wav")
            dis_lo35.remove("wav\D5.wav")
            dis_lo36.remove("wav\D5.wav")
            dis_lo37.remove("wav\D5.wav")
            dis_lo38.remove("wav\D5.wav")
            dis_lo39.remove("wav\D5.wav")
            dis_lo40.remove("wav\D5.wav")
        elif target== "wav\D6.wav":
            d_lo1.remove("wav\D6.wav")
            g_lo1.remove("wav\D6.wav")
            b_lo1.remove("wav\D6.wav")
            dis_lo1.remove("wav\D6.wav")
            d_lo2.remove("wav\D6.wav")
            g_lo2.remove("wav\D6.wav")
            b_lo2.remove("wav\D6.wav")
            dis_lo2.remove("wav\D6.wav")
            d_lo3.remove("wav\D6.wav")
            g_lo3.remove("wav\D6.wav")
            b_lo3.remove("wav\D6.wav")
            dis_lo3.remove("wav\D6.wav")
            d_lo4.remove("wav\D6.wav")
            g_lo4.remove("wav\D6.wav")
            b_lo4.remove("wav\D6.wav")
            dis_lo4.remove("wav\D6.wav")
            d_lo5.remove("wav\D6.wav")
            g_lo5.remove("wav\D6.wav")
            b_lo5.remove("wav\D6.wav")
            dis_lo5.remove("wav\D6.wav")
            d_lo6.remove("wav\D6.wav")
            g_lo6.remove("wav\D6.wav")
            b_lo6.remove("wav\D6.wav")
            dis_lo6.remove("wav\D6.wav")
            dis_lo7.remove("wav\D6.wav")
            dis_lo8.remove("wav\D6.wav")
            dis_lo9.remove("wav\D6.wav")
            dis_lo10.remove("wav\D6.wav")
            dis_lo11.remove("wav\D6.wav")
            dis_lo12.remove("wav\D6.wav")
            dis_lo13.remove("wav\D6.wav")
            dis_lo14.remove("wav\D6.wav")
            dis_lo15.remove("wav\D6.wav")
            dis_lo16.remove("wav\D6.wav")
            dis_lo17.remove("wav\D6.wav")
            dis_lo18.remove("wav\D6.wav")
            dis_lo19.remove("wav\D6.wav")
            dis_lo20.remove("wav\D6.wav")
            dis_lo21.remove("wav\D6.wav")
            dis_lo22.remove("wav\D6.wav")
            dis_lo23.remove("wav\D6.wav")
            dis_lo24.remove("wav\D6.wav")
            dis_lo25.remove("wav\D6.wav")
            dis_lo26.remove("wav\D6.wav")
            dis_lo27.remove("wav\D6.wav")
            dis_lo28.remove("wav\D6.wav")
            dis_lo29.remove("wav\D6.wav")
            dis_lo30.remove("wav\D6.wav")
            dis_lo31.remove("wav\D6.wav")
            dis_lo32.remove("wav\D6.wav")
            dis_lo33.remove("wav\D6.wav")
            dis_lo34.remove("wav\D6.wav")
            dis_lo35.remove("wav\D6.wav")
            dis_lo36.remove("wav\D6.wav")
            dis_lo37.remove("wav\D6.wav")
            dis_lo38.remove("wav\D6.wav")
            dis_lo39.remove("wav\D6.wav")
            dis_lo40.remove("wav\D6.wav")
        elif target== "wav\D7.wav":
            g_up1.remove("wav\D7.wav")
            g_up1.append(g_lo1[0])
            g_lo1.remove(g_lo1[0])
            b_up1.remove("wav\D7.wav")
            b_up1.append(b_lo1[0])
            b_lo1.remove(b_lo1[0])
            dis_up1.remove("wav\D7.wav")
            g_up2.remove("wav\D7.wav")
            g_up2.append(g_lo2[0])
            g_lo2.remove(g_lo2[0])
            b_up2.remove("wav\D7.wav")
            b_up2.append(b_lo2[0])
            b_lo2.remove(b_lo2[0])
            dis_up2.remove("wav\D7.wav")
            g_up3.remove("wav\D7.wav")
            g_up3.append(g_lo3[0])
            g_lo3.remove(g_lo3[0])
            b_up3.remove("wav\D7.wav")
            b_up3.append(b_lo3[0])
            b_lo3.remove(b_lo3[0])
            dis_up3.remove("wav\D7.wav")
            g_up4.remove("wav\D7.wav")
            g_up4.append(g_lo4[0])
            g_lo4.remove(g_lo4[0])
            b_up4.remove("wav\D7.wav")
            b_up4.append(b_lo4[0])
            b_lo4.remove(b_lo4[0])
            dis_up4.remove("wav\D7.wav")
            g_up5.remove("wav\D7.wav")
            g_up5.append(g_lo5[0])
            g_lo5.remove(g_lo5[0])
            b_up5.remove("wav\D7.wav")
            b_up5.append(b_lo5[0])
            b_lo5.remove(b_lo5[0])
            dis_up5.remove("wav\D7.wav")
            g_up6.remove("wav\D7.wav")
            g_up6.append(g_lo6[0])
            g_lo6.remove(g_lo6[0])
            b_up6.remove("wav\D7.wav")
            b_up6.append(b_lo6[0])
            b_lo6.remove(b_lo6[0])
            dis_up6.remove("wav\D7.wav")
            dis_up7.remove("wav\D7.wav")
            dis_up8.remove("wav\D7.wav")
            dis_up9.remove("wav\D7.wav")
            dis_up10.remove("wav\D7.wav")
            dis_up11.remove("wav\D7.wav")
            dis_up12.remove("wav\D7.wav")
            dis_up13.remove("wav\D7.wav")
            dis_up14.remove("wav\D7.wav")
            dis_up15.remove("wav\D7.wav")
            dis_up16.remove("wav\D7.wav")
            dis_up17.remove("wav\D7.wav")
            dis_up18.remove("wav\D7.wav")
            dis_up19.remove("wav\D7.wav")
            dis_up20.remove("wav\D7.wav")
            dis_up21.remove("wav\D7.wav")
            dis_up22.remove("wav\D7.wav")
            dis_up23.remove("wav\D7.wav")
            dis_up24.remove("wav\D7.wav")
            dis_up25.remove("wav\D7.wav")
            dis_up26.remove("wav\D7.wav")
            dis_up27.remove("wav\D7.wav")
            dis_up28.remove("wav\D7.wav")
            dis_up29.remove("wav\D7.wav")
            dis_up30.remove("wav\D7.wav")
            dis_up31.remove("wav\D7.wav")
            dis_up32.remove("wav\D7.wav")
            dis_up33.remove("wav\D7.wav")
            dis_up34.remove("wav\D7.wav")
            dis_up35.remove("wav\D7.wav")
            dis_up36.remove("wav\D7.wav")
            dis_up37.remove("wav\D7.wav")
            dis_up38.remove("wav\D7.wav")
            dis_up39.remove("wav\D7.wav")
            dis_up40.remove("wav\D7.wav")
            d_up1.remove("wav\D7.wav")
            d_up2.remove("wav\D7.wav")
            d_up3.remove("wav\D7.wav")
            d_up4.remove("wav\D7.wav")
            d_up5.remove("wav\D7.wav")
            d_up6.remove("wav\D7.wav")
        elif target== "wav\F5.wav":
            d_lo1.remove("wav\F5.wav")
            f_lo1.remove("wav\F5.wav")
            b_lo1.remove("wav\F5.wav")
            d_lo2.remove("wav\F5.wav")
            f_lo2.remove("wav\F5.wav")
            b_lo2.remove("wav\F5.wav")
            d_lo3.remove("wav\F5.wav")
            f_lo3.remove("wav\F5.wav")
            b_lo3.remove("wav\F5.wav")
            d_lo4.remove("wav\F5.wav")
            f_lo4.remove("wav\F5.wav")
            b_lo4.remove("wav\F5.wav")
            d_lo5.remove("wav\F5.wav")
            f_lo5.remove("wav\F5.wav")
            b_lo5.remove("wav\F5.wav")
            d_lo6.remove("wav\F5.wav")
            f_lo6.remove("wav\F5.wav")
            b_lo6.remove("wav\F5.wav")
        elif target== "wav\F6.wav":
            d_up1.remove("wav\F6.wav")
            f_up1.remove("wav\F6.wav")
            b_up1.remove("wav\F6.wav")
            b_up1.append(b_lo1[0])
            b_lo1.remove(b_lo1[0])
            d_up2.remove("wav\F6.wav")
            f_up2.remove("wav\F6.wav")
            b_up2.remove("wav\F6.wav")
            b_up2.append(b_lo2[0])
            b_lo2.remove(b_lo2[0])
            d_up3.remove("wav\F6.wav")
            f_up3.remove("wav\F6.wav")
            b_up3.remove("wav\F6.wav")
            b_up3.append(b_lo3[0])
            b_lo3.remove(b_lo3[0])
            d_up4.remove("wav\F6.wav")
            f_up4.remove("wav\F6.wav")
            b_up4.remove("wav\F6.wav")
            b_up4.append(b_lo4[0])
            b_lo4.remove(b_lo4[0])
            d_up5.remove("wav\F6.wav")
            f_up5.remove("wav\F6.wav")
            b_up5.remove("wav\F6.wav")
            b_up5.append(b_lo5[0])
            b_lo5.remove(b_lo5[0])
            d_up6.remove("wav\F6.wav")
            f_up6.remove("wav\F6.wav")
            b_up6.remove("wav\F6.wav")
            b_up6.append(b_lo6[0])
            b_lo6.remove(b_lo6[0])
        elif target== "wav\G5.wav":
            c_lo1.remove("wav\G5.wav")
            e_lo1.remove("wav\G5.wav")
            g_lo1.remove("wav\G5.wav")
            c_lo2.remove("wav\G5.wav")
            e_lo2.remove("wav\G5.wav")
            g_lo2.remove("wav\G5.wav")
            c_lo3.remove("wav\G5.wav")
            e_lo3.remove("wav\G5.wav")
            g_lo3.remove("wav\G5.wav")
            c_lo4.remove("wav\G5.wav")
            e_lo4.remove("wav\G5.wav")
            g_lo4.remove("wav\G5.wav")
            c_lo5.remove("wav\G5.wav")
            e_lo5.remove("wav\G5.wav")
            g_lo5.remove("wav\G5.wav")
            c_lo6.remove("wav\G5.wav")
            e_lo6.remove("wav\G5.wav")
            g_lo6.remove("wav\G5.wav")
        elif target== "wav\G6.wav":
            c_up1.remove("wav\G6.wav")
            e_up1.remove("wav\G6.wav")
            g_up1.remove("wav\G6.wav")
            g_up1.append(g_lo1[0])
            g_lo1.remove(g_lo1[0])
            c_up2.remove("wav\G6.wav")
            e_up2.remove("wav\G6.wav")
            g_up2.remove("wav\G6.wav")
            g_up2.append(g_lo2[0])
            g_lo2.remove(g_lo2[0])
            c_up3.remove("wav\G6.wav")
            e_up3.remove("wav\G6.wav")
            g_up3.remove("wav\G6.wav")
            g_up3.append(g_lo3[0])
            g_lo3.remove(g_lo3[0])
            c_up4.remove("wav\G6.wav")
            e_up4.remove("wav\G6.wav")
            g_up4.remove("wav\G6.wav")
            g_up4.append(g_lo4[0])
            g_lo4.remove(g_lo4[0])
            c_up5.remove("wav\G6.wav")
            e_up5.remove("wav\G6.wav")
            g_up5.remove("wav\G6.wav")
            g_up5.append(g_lo5[0])
            g_lo5.remove(g_lo5[0])
            c_up6.remove("wav\G6.wav")
            e_up6.remove("wav\G6.wav")
            g_up6.remove("wav\G6.wav")
            g_up6.append(g_lo6[0])
            g_lo6.remove(g_lo6[0])
        elif target== "wav\A5.wav":
            d_lo1.remove("wav\A5.wav")
            f_lo1.remove("wav\A5.wav")
            a_lo1.remove("wav\A5.wav")
            d_lo2.remove("wav\A5.wav")
            f_lo2.remove("wav\A5.wav")
            a_lo2.remove("wav\A5.wav")
            d_lo3.remove("wav\A5.wav")
            f_lo3.remove("wav\A5.wav")
            a_lo3.remove("wav\A5.wav")
            d_lo4.remove("wav\A5.wav")
            f_lo4.remove("wav\A5.wav")
            a_lo4.remove("wav\A5.wav")
            d_lo5.remove("wav\A5.wav")
            f_lo5.remove("wav\A5.wav")
            a_lo5.remove("wav\A5.wav")
            d_lo6.remove("wav\A5.wav")
            f_lo6.remove("wav\A5.wav")
            a_lo6.remove("wav\A5.wav")
        elif target== "wav\A6.wav":
            d_up1.remove("wav\A6.wav")
            f_up1.remove("wav\A6.wav")
            a_up1.remove("wav\A6.wav")
            d_up2.remove("wav\A6.wav")
            f_up2.remove("wav\A6.wav")
            a_up2.remove("wav\A6.wav")
            d_up3.remove("wav\A6.wav")
            f_up3.remove("wav\A6.wav")
            a_up3.remove("wav\A6.wav")
            d_up4.remove("wav\A6.wav")
            f_up4.remove("wav\A6.wav")
            a_up4.remove("wav\A6.wav")
            d_up5.remove("wav\A6.wav")
            f_up5.remove("wav\A6.wav")
            a_up5.remove("wav\A6.wav")
            d_up6.remove("wav\A6.wav")
            f_up6.remove("wav\A6.wav")
            a_up6.remove("wav\A6.wav")
        elif target== "wav\F#5.wav":
            dis_lo1.remove("wav\F#5.wav")
            dis_lo2.remove("wav\F#5.wav")
            dis_lo3.remove("wav\F#5.wav")
            dis_lo4.remove("wav\F#5.wav")
            dis_lo5.remove("wav\F#5.wav")
            dis_lo6.remove("wav\F#5.wav")
            dis_lo7.remove("wav\F#5.wav")
            dis_lo8.remove("wav\F#5.wav")
            dis_lo9.remove("wav\F#5.wav")
            dis_lo10.remove("wav\F#5.wav")
            dis_lo11.remove("wav\F#5.wav")
            dis_lo12.remove("wav\F#5.wav")
            dis_lo13.remove("wav\F#5.wav")
            dis_lo14.remove("wav\F#5.wav")
            dis_lo15.remove("wav\F#5.wav")
            dis_lo16.remove("wav\F#5.wav")
            dis_lo17.remove("wav\F#5.wav")
            dis_lo18.remove("wav\F#5.wav")
            dis_lo19.remove("wav\F#5.wav")
            dis_lo20.remove("wav\F#5.wav")
            dis_lo21.remove("wav\F#5.wav")
            dis_lo22.remove("wav\F#5.wav")
            dis_lo23.remove("wav\F#5.wav")
            dis_lo24.remove("wav\F#5.wav")
            dis_lo25.remove("wav\F#5.wav")
            dis_lo26.remove("wav\F#5.wav")
            dis_lo27.remove("wav\F#5.wav")
            dis_lo28.remove("wav\F#5.wav")
            dis_lo29.remove("wav\F#5.wav")
            dis_lo30.remove("wav\F#5.wav")
            dis_lo31.remove("wav\F#5.wav")
            dis_lo32.remove("wav\F#5.wav")
            dis_lo33.remove("wav\F#5.wav")
            dis_lo34.remove("wav\F#5.wav")
            dis_lo35.remove("wav\F#5.wav")
            dis_lo36.remove("wav\F#5.wav")
            dis_lo37.remove("wav\F#5.wav")
            dis_lo38.remove("wav\F#5.wav")
            dis_lo39.remove("wav\F#5.wav")
            dis_lo40.remove("wav\F#5.wav")
        elif target== "wav\G#5.wav":
            dis_lo1.remove("wav\G#5.wav")
            dis_lo2.remove("wav\G#5.wav")
            dis_lo3.remove("wav\G#5.wav")
            dis_lo4.remove("wav\G#5.wav")
            dis_lo5.remove("wav\G#5.wav")
            dis_lo6.remove("wav\G#5.wav")
            dis_lo7.remove("wav\G#5.wav")
            dis_lo8.remove("wav\G#5.wav")
            dis_lo9.remove("wav\G#5.wav")
            dis_lo10.remove("wav\G#5.wav")
            dis_lo11.remove("wav\G#5.wav")
            dis_lo12.remove("wav\G#5.wav")
            dis_lo13.remove("wav\G#5.wav")
            dis_lo14.remove("wav\G#5.wav")
            dis_lo15.remove("wav\G#5.wav")
            dis_lo16.remove("wav\G#5.wav")
            dis_lo17.remove("wav\G#5.wav")
            dis_lo18.remove("wav\G#5.wav")
            dis_lo19.remove("wav\G#5.wav")
            dis_lo20.remove("wav\G#5.wav")
            dis_lo21.remove("wav\G#5.wav")
            dis_lo22.remove("wav\G#5.wav")
            dis_lo23.remove("wav\G#5.wav")
            dis_lo24.remove("wav\G#5.wav")
            dis_lo25.remove("wav\G#5.wav")
            dis_lo26.remove("wav\G#5.wav")
            dis_lo27.remove("wav\G#5.wav")
            dis_lo28.remove("wav\G#5.wav")
            dis_lo29.remove("wav\G#5.wav")
            dis_lo30.remove("wav\G#5.wav")
            dis_lo31.remove("wav\G#5.wav")
            dis_lo32.remove("wav\G#5.wav")
            dis_lo33.remove("wav\G#5.wav")
            dis_lo34.remove("wav\G#5.wav")
            dis_lo35.remove("wav\G#5.wav")
            dis_lo36.remove("wav\G#5.wav")
            dis_lo37.remove("wav\G#5.wav")
            dis_lo38.remove("wav\G#5.wav")
            dis_lo39.remove("wav\G#5.wav")
            dis_lo40.remove("wav\G#5.wav")
        elif target== "wav\A#5.wav":
            dis_lo1.remove("wav\A#5.wav")
            dis_lo2.remove("wav\A#5.wav")
            dis_lo3.remove("wav\A#5.wav")
            dis_lo4.remove("wav\A#5.wav")
            dis_lo5.remove("wav\A#5.wav")
            dis_lo6.remove("wav\A#5.wav")
            dis_lo7.remove("wav\A#5.wav")
            dis_lo8.remove("wav\A#5.wav")
            dis_lo9.remove("wav\A#5.wav")
            dis_lo10.remove("wav\A#5.wav")
            dis_lo11.remove("wav\A#5.wav")
            dis_lo12.remove("wav\A#5.wav")
            dis_lo13.remove("wav\A#5.wav")
            dis_lo14.remove("wav\A#5.wav")
            dis_lo15.remove("wav\A#5.wav")
            dis_lo16.remove("wav\A#5.wav")
            dis_lo17.remove("wav\A#5.wav")
            dis_lo18.remove("wav\A#5.wav")
            dis_lo19.remove("wav\A#5.wav")
            dis_lo20.remove("wav\A#5.wav")
            dis_lo21.remove("wav\A#5.wav")
            dis_lo22.remove("wav\A#5.wav")
            dis_lo23.remove("wav\A#5.wav")
            dis_lo24.remove("wav\A#5.wav")
            dis_lo25.remove("wav\A#5.wav")
            dis_lo26.remove("wav\A#5.wav")
            dis_lo27.remove("wav\A#5.wav")
            dis_lo28.remove("wav\A#5.wav")
            dis_lo29.remove("wav\A#5.wav")
            dis_lo30.remove("wav\A#5.wav")
            dis_lo31.remove("wav\A#5.wav")
            dis_lo32.remove("wav\A#5.wav")
            dis_lo33.remove("wav\A#5.wav")
            dis_lo34.remove("wav\A#5.wav")
            dis_lo35.remove("wav\A#5.wav")
            dis_lo36.remove("wav\A#5.wav")
            dis_lo37.remove("wav\A#5.wav")
            dis_lo38.remove("wav\A#5.wav")
            dis_lo39.remove("wav\A#5.wav")
            dis_lo40.remove("wav\A#5.wav")
        elif target== "wav\F#6.wav":
            dis_up1.remove("wav\F#6.wav")
            dis_up2.remove("wav\F#6.wav")
            dis_up3.remove("wav\F#6.wav")
            dis_up4.remove("wav\F#6.wav")
            dis_up5.remove("wav\F#6.wav")
            dis_up6.remove("wav\F#6.wav")
            dis_up7.remove("wav\F#6.wav")
            dis_up8.remove("wav\F#6.wav")
            dis_up9.remove("wav\F#6.wav")
            dis_up10.remove("wav\F#6.wav")
            dis_up11.remove("wav\F#6.wav")
            dis_up12.remove("wav\F#6.wav")
            dis_up13.remove("wav\F#6.wav")
            dis_up14.remove("wav\F#6.wav")
            dis_up15.remove("wav\F#6.wav")
            dis_up16.remove("wav\F#6.wav")
            dis_up17.remove("wav\F#6.wav")
            dis_up18.remove("wav\F#6.wav")
            dis_up19.remove("wav\F#6.wav")
            dis_up20.remove("wav\F#6.wav")
            dis_up21.remove("wav\F#6.wav")
            dis_up22.remove("wav\F#6.wav")
            dis_up23.remove("wav\F#6.wav")
            dis_up24.remove("wav\F#6.wav")
            dis_up25.remove("wav\F#6.wav")
            dis_up26.remove("wav\F#6.wav")
            dis_up27.remove("wav\F#6.wav")
            dis_up28.remove("wav\F#6.wav")
            dis_up29.remove("wav\F#6.wav")
            dis_up30.remove("wav\F#6.wav")
            dis_up31.remove("wav\F#6.wav")
            dis_up32.remove("wav\F#6.wav")
            dis_up33.remove("wav\F#6.wav")
            dis_up34.remove("wav\F#6.wav")
            dis_up35.remove("wav\F#6.wav")
            dis_up36.remove("wav\F#6.wav")
            dis_up37.remove("wav\F#6.wav")
            dis_up38.remove("wav\F#6.wav")
            dis_up39.remove("wav\F#6.wav")
            dis_up40.remove("wav\F#6.wav")
        elif target== "wav\G#6.wav":
            dis_up1.remove("wav\G#6.wav")
            dis_up2.remove("wav\G#6.wav")
            dis_up3.remove("wav\G#6.wav")
            dis_up4.remove("wav\G#6.wav")
            dis_up5.remove("wav\G#6.wav")
            dis_up6.remove("wav\G#6.wav")
            dis_up7.remove("wav\G#6.wav")
            dis_up8.remove("wav\G#6.wav")
            dis_up9.remove("wav\G#6.wav")
            dis_up10.remove("wav\G#6.wav")
            dis_up11.remove("wav\G#6.wav")
            dis_up12.remove("wav\G#6.wav")
            dis_up13.remove("wav\G#6.wav")
            dis_up14.remove("wav\G#6.wav")
            dis_up15.remove("wav\G#6.wav")
            dis_up16.remove("wav\G#6.wav")
            dis_up17.remove("wav\G#6.wav")
            dis_up18.remove("wav\G#6.wav")
            dis_up19.remove("wav\G#6.wav")
            dis_up20.remove("wav\G#6.wav")
            dis_up21.remove("wav\G#6.wav")
            dis_up22.remove("wav\G#6.wav")
            dis_up23.remove("wav\G#6.wav")
            dis_up24.remove("wav\G#6.wav")
            dis_up25.remove("wav\G#6.wav")
            dis_up26.remove("wav\G#6.wav")
            dis_up27.remove("wav\G#6.wav")
            dis_up28.remove("wav\G#6.wav")
            dis_up29.remove("wav\G#6.wav")
            dis_up30.remove("wav\G#6.wav")
            dis_up31.remove("wav\G#6.wav")
            dis_up32.remove("wav\G#6.wav")
            dis_up33.remove("wav\G#6.wav")
            dis_up34.remove("wav\G#6.wav")
            dis_up35.remove("wav\G#6.wav")
            dis_up36.remove("wav\G#6.wav")
            dis_up37.remove("wav\G#6.wav")
            dis_up38.remove("wav\G#6.wav")
            dis_up39.remove("wav\G#6.wav")
            dis_up40.remove("wav\G#6.wav")
        elif target== "wav\A#6.wav":
            dis_up1.remove("wav\A#6.wav")
            dis_up2.remove("wav\A#6.wav")
            dis_up3.remove("wav\A#6.wav")
            dis_up4.remove("wav\A#6.wav")
            dis_up5.remove("wav\A#6.wav")
            dis_up6.remove("wav\A#6.wav")
            dis_up7.remove("wav\A#6.wav")
            dis_up8.remove("wav\A#6.wav")
            dis_up9.remove("wav\A#6.wav")
            dis_up10.remove("wav\A#6.wav")
            dis_up11.remove("wav\A#6.wav")
            dis_up12.remove("wav\A#6.wav")
            dis_up13.remove("wav\A#6.wav")
            dis_up14.remove("wav\A#6.wav")
            dis_up15.remove("wav\A#6.wav")
            dis_up16.remove("wav\A#6.wav")
            dis_up17.remove("wav\A#6.wav")
            dis_up18.remove("wav\A#6.wav")
            dis_up19.remove("wav\A#6.wav")
            dis_up20.remove("wav\A#6.wav")
            dis_up21.remove("wav\A#6.wav")
            dis_up22.remove("wav\A#6.wav")
            dis_up23.remove("wav\A#6.wav")
            dis_up24.remove("wav\A#6.wav")
            dis_up25.remove("wav\A#6.wav")
            dis_up26.remove("wav\A#6.wav")
            dis_up27.remove("wav\A#6.wav")
            dis_up28.remove("wav\A#6.wav")
            dis_up29.remove("wav\A#6.wav")
            dis_up30.remove("wav\A#6.wav")
            dis_up31.remove("wav\A#6.wav")
            dis_up32.remove("wav\A#6.wav")
            dis_up33.remove("wav\A#6.wav")
            dis_up34.remove("wav\A#6.wav")
            dis_up35.remove("wav\A#6.wav")
            dis_up36.remove("wav\A#6.wav")
            dis_up37.remove("wav\A#6.wav")
            dis_up38.remove("wav\A#6.wav")
            dis_up39.remove("wav\A#6.wav")
            dis_up40.remove("wav\A#6.wav")
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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Flow
  Routine exp_ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition_R.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'target': 'wav\\C6.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\D6.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\F6.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\G6.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\A6.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\C7.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\D7.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\A5.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\G5.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\F5.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\D5.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'}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
    Routine bre
    Routine trial
    Routine feed
    Routine break_3
  LoopTerminator trials
  Routine end
