PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'gender': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = consonanceEXP_random
  keyboardBackend = ioHub
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Routines
  Routine trial
    RoutineSettingsComponent trial
      saveStartStop = False
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    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        c_lower=["wav\E4.wav", "wav\G4.wav", "wav\C5.wav", "wav\E5.wav", "wav\G5.wav","wav\C6.wav"]
        c_upper=["wav\E6.wav", "wav\G6.wav", "wav\C7.wav", "wav\E7.wav", "wav\G7.wav"]
        d_lower=["wav\D4.wav", "wav\D5.wav","wav\D6.wav","wav\F4.wav", "wav\F5.wav", "wav\A4.wav","wav\A5.wav"]
        d_upper=["wav\D7.wav", "wav\F6.wav", "wav\F7.wav", "wav\A6.wav", "wav\A7.wav"]
        e_lower=["wav\E4.wav", "wav\E5.wav", "wav\G4.wav", "wav\G5.wav", "wav\B4.wav", "wav\B5.wav"]
        e_upper=["wav\E6.wav", "wav\E7.wav", "wav\G6.wav", "wav\G7.wav","wav\B6.wav"]
        f_lower=["wav\F4.wav", "wav\F5.wav", "wav\A4.wav", "wav\A5.wav", "wav\C5.wav", "wav\C6.wav"]
        f_upper=["wav\F6.wav", "wav\F7.wav", "wav\A6.wav", "wav\A7.wav", "wav\C7.wav"]
        g_lower=["wav\G4.wav", "wav\G5.wav", "wav\B4.wav", "wav\B5.wav", "wav\D4.wav", "wav\D5.wav", "wav\D6.wav"]
        g_upper=["wav\G6.wav", "wav\G7.wav","wav\B6.wav", "wav\D7.wav"]
        a_lower=["wav\A4.wav", "wav\A5.wav", "wav\C5.wav", "wav\C6.wav", "wav\E4.wav", "wav\E5.wav"]
        a_upper=["wav\A6.wav", "wav\A7.wav",  "wav\C7.wav", "wav\E6.wav", "wav\E7.wav"]
        b_lower=["wav\D4.wav", "wav\D5.wav", "wav\D6.wav", "wav\F4.wav", "wav\F5.wav", "wav\B4.wav", "wav\B5.wav"]
        b_upper=["wav\D7.wav", "wav\F6.wav","wav\F7.wav", "wav\B6.wav"]
        disone_lower=["wav\D4.wav","wav\E4.wav","wav\F#4.wav","wav\G#4.wav","wav\A#4.wav","wav\C5.wav", "wav\D5.wav","wav\E5.wav","wav\F#5.wav","wav\G#5.wav","wav\A#5.wav", "wav\C6.wav", "wav\D6.wav"]
        disone_upper=["wav\E6.wav","wav\F#6.wav","wav\G#6.wav","wav\A#6.wav", "wav\C7.wav", "wav\D7.wav","wav\E7.wav","wav\F#7.wav","wav\G#7.wav","wav\A#7.wav"]
        c_lower2=c_lower.copy()
        c_upper2=c_upper.copy()
        d_lower2=d_lower.copy()
        d_upper2=d_upper.copy()
        e_lower2=e_lower.copy()
        e_upper2=e_upper.copy()
        f_lower2=f_lower.copy()
        f_upper2=f_upper.copy()
        g_lower2=g_lower.copy()
        g_upper2=g_upper.copy()
        a_lower2=a_lower.copy()
        a_upper2=a_upper.copy()
        b_lower2=b_lower.copy()
        b_upper2=b_upper.copy()
        disone_lower2=disone_lower.copy()
        disone_upper2=disone_upper.copy()
        c_lower3=c_lower.copy()
        c_upper3=c_upper.copy()
        d_lower3=d_lower.copy()
        d_upper3=d_upper.copy()
        e_lower3=e_lower.copy()
        e_upper3=e_upper.copy()
        f_lower3=f_lower.copy()
        f_upper3=f_upper.copy()
        g_lower3=g_lower.copy()
        g_upper3=g_upper.copy()
        a_lower3=a_lower.copy()
        a_upper3=a_upper.copy()
        b_lower3=b_lower.copy()
        b_upper3=b_upper.copy()
        disone_lower3=disone_lower.copy()
        disone_upper3=disone_upper.copy()
        c_lower4=c_lower.copy()
        c_upper4=c_upper.copy()
        d_lower4=d_lower.copy()
        d_upper4=d_upper.copy()
        e_lower4=e_lower.copy()
        e_upper4=e_upper.copy()
        f_lower4=f_lower.copy()
        f_upper4=f_upper.copy()
        g_lower4=g_lower.copy()
        g_upper4=g_upper.copy()
        a_lower4=a_lower.copy()
        a_upper4=a_upper.copy()
        b_lower4=b_lower.copy()
        b_upper4=b_upper.copy()
        disone_lower4=disone_lower.copy()
        disone_upper4=disone_upper.copy()
        c_lower5=c_lower.copy()
        c_upper5=c_upper.copy()
        d_lower5=d_lower.copy()
        d_upper5=d_upper.copy()
        e_lower5=e_lower.copy()
        e_upper5=e_upper.copy()
        f_lower5=f_lower.copy()
        f_upper5=f_upper.copy()
        g_lower5=g_lower.copy()
        g_upper5=g_upper.copy()
        a_lower5=a_lower.copy()
        a_upper5=a_upper.copy()
        b_lower5=b_lower.copy()
        b_upper5=b_upper.copy()
        disone_lower5=disone_lower.copy()
        disone_upper5=disone_upper.copy()
        c_lower6=c_lower.copy()
        c_upper6=c_upper.copy()
        d_lower6=d_lower.copy()
        d_upper6=d_upper.copy()
        e_lower6=e_lower.copy()
        e_upper6=e_upper.copy()
        f_lower6=f_lower.copy()
        f_upper6=f_upper.copy()
        g_lower6=g_lower.copy()
        g_upper6=g_upper.copy()
        a_lower6=a_lower.copy()
        a_upper6=a_upper.copy()
        b_lower6=b_lower.copy()
        b_upper6=b_upper.copy()
        disone_lower6=disone_lower.copy()
        disone_upper6=disone_upper.copy()
        disone_lower7=disone_lower.copy()
        disone_upper7=disone_upper.copy()
        disone_lower8=disone_lower.copy()
        disone_upper8=disone_upper.copy()
        disone_lower9=disone_lower.copy()
        disone_upper9=disone_upper.copy()
        disone_lower10=disone_lower.copy()
        disone_upper10=disone_upper.copy()
        disone_lower11=disone_lower.copy()
        disone_upper11=disone_upper.copy()
        disone_lower12=disone_lower.copy()
        disone_upper12=disone_upper.copy()
        disone_lower13=disone_lower.copy()
        disone_upper13=disone_upper.copy()
        disone_lower14=disone_lower.copy()
        disone_upper14=disone_upper.copy()
        disone_lower15=disone_lower.copy()
        disone_upper15=disone_upper.copy()
        disone_lower16=disone_lower.copy()
        disone_upper16=disone_upper.copy()
        disone_lower17=disone_lower.copy()
        disone_upper17=disone_upper.copy()
        disone_lower18=disone_lower.copy()
        disone_upper18=disone_upper.copy()
        disone_lower19=disone_lower.copy()
        disone_upper19=disone_upper.copy()
        disone_lower20=disone_lower.copy()
        disone_upper20=disone_upper.copy()
        disone_lower21=disone_lower.copy()
        disone_upper21=disone_upper.copy()
        disone_lower22=disone_lower.copy()
        disone_upper22=disone_upper.copy()
        disone_lower23=disone_lower.copy()
        disone_upper23=disone_upper.copy()
        disone_lower24=disone_lower.copy()
        disone_upper24=disone_upper.copy()
        disone_lower25=disone_lower.copy()
        disone_upper25=disone_upper.copy()
        disone_lower26=disone_lower.copy()
        disone_upper26=disone_upper.copy()
        disone_lower27=disone_lower.copy()
        disone_upper27=disone_upper.copy()
        disone_lower28=disone_lower.copy()
        disone_upper28=disone_upper.copy()
        disone_lower29=disone_lower.copy()
        disone_upper29=disone_upper.copy()
        disone_lower30=disone_lower.copy()
        disone_upper30=disone_upper.copy()
        disone_lower31=disone_lower.copy()
        disone_upper31=disone_upper.copy()
        disone_lower32=disone_lower.copy()
        disone_upper32=disone_upper.copy()
        disone_lower33=disone_lower.copy()
        disone_upper33=disone_upper.copy()
        disone_lower34=disone_lower.copy()
        disone_upper34=disone_upper.copy()
        disone_lower35=disone_lower.copy()
        disone_upper35=disone_upper.copy()
        disone_lower36=disone_lower.copy()
        disone_upper36=disone_upper.copy()
        disone_lower37=disone_lower.copy()
        disone_upper37=disone_upper.copy()
        disone_lower38=disone_lower.copy()
        disone_upper38=disone_upper.copy()
        disone_lower39=disone_lower.copy()
        disone_upper39=disone_upper.copy()
        disone_lower40=disone_lower.copy()
        disone_upper40=disone_upper.copy()
        c=[c_lower,c_upper]
        d=[d_lower,d_upper]
        e=[e_lower,e_upper]
        f=[f_lower,f_upper]
        g=[g_lower,g_upper]
        a=[a_lower,a_upper]
        b=[b_lower,b_upper]
        c2=[c_lower2,c_upper2]
        d2=[d_lower2,d_upper2]
        e2=[e_lower2,e_upper2]
        f2=[f_lower2,f_upper2]
        g2=[g_lower2,g_upper2]
        a2=[a_lower2,a_upper2]
        b2=[b_lower2,b_upper2]
        c3=[c_lower3,c_upper3]
        d3=[d_lower3,d_upper3]
        e3=[e_lower3,e_upper3]
        f3=[f_lower3,f_upper3]
        g3=[g_lower3,g_upper3]
        a3=[a_lower3,a_upper3]
        b3=[b_lower3,b_upper3]
        c4=[c_lower4,c_upper4]
        d4=[d_lower4,d_upper4]
        e4=[e_lower4,e_upper4]
        f4=[f_lower4,f_upper4]
        g4=[g_lower4,g_upper4]
        a4=[a_lower4,a_upper4]
        b4=[b_lower4,b_upper4]
        c5=[c_lower5,c_upper5]
        d5=[d_lower5,d_upper5]
        e5=[e_lower5,e_upper5]
        f5=[f_lower5,f_upper5]
        g5=[g_lower5,g_upper5]
        a5=[a_lower5,a_upper5]
        b5=[b_lower5,b_upper5]
        c6=[c_lower6,c_upper6]
        d6=[d_lower6,d_upper6]
        e6=[e_lower6,e_upper6]
        f6=[f_lower6,f_upper6]
        g6=[g_lower6,g_upper6]
        a6=[a_lower6,a_upper6]
        b6=[b_lower6,b_upper6]
        disone=[disone_lower,disone_upper]
        disone2=[disone_lower2,disone_upper2]
        disone3=[disone_lower3,disone_upper3]
        disone4=[disone_lower4,disone_upper4]
        disone5=[disone_lower5,disone_upper5]
        disone6=[disone_lower6,disone_upper6]
        disone7=[disone_lower7,disone_upper7]
        disone8=[disone_lower8,disone_upper8]
        disone9=[disone_lower9,disone_upper9]
        disone10=[disone_lower10,disone_upper10]
        disone11=[disone_lower11,disone_upper11]
        disone12=[disone_lower12,disone_upper12]
        disone13=[disone_lower13,disone_upper13]
        disone14=[disone_lower14,disone_upper14]
        disone15=[disone_lower15,disone_upper15]
        disone16=[disone_lower16,disone_upper16]
        disone17=[disone_lower17,disone_upper17]
        disone18=[disone_lower18,disone_upper18]
        disone19=[disone_lower19,disone_upper19]
        disone20=[disone_lower20,disone_upper20]
        disone21=[disone_lower21,disone_upper21]
        disone22=[disone_lower22,disone_upper22]
        disone23=[disone_lower23,disone_upper23]
        disone24=[disone_lower24,disone_upper24]
        disone25=[disone_lower25,disone_upper25]
        disone26=[disone_lower26,disone_upper26]
        disone27=[disone_lower27,disone_upper27]
        disone28=[disone_lower28,disone_upper28]
        disone29=[disone_lower29,disone_upper29]
        disone30=[disone_lower30,disone_upper30]
        disone31=[disone_lower31,disone_upper31]
        disone32=[disone_lower32,disone_upper32]
        disone33=[disone_lower33,disone_upper33]
        disone34=[disone_lower34,disone_upper34]
        disone35=[disone_lower35,disone_upper35]
        disone36=[disone_lower36,disone_upper36]
        disone37=[disone_lower37,disone_upper37]
        disone38=[disone_lower38,disone_upper38]
        disone39=[disone_lower39,disone_upper39]
        disone40=[disone_lower40,disone_upper40]

        starttime=[0.56,0.62, 0.68, 0.74, 0.80, 0.86, 0.92, 0.98, 1.04, 1.1, 1.16, 1.22,1.28,1.34,1.4,1.46,1.52,1.58,1.64, 1.7, 1.76, 1.82, 1.88, 1.94, 2, 2.06, 2.12,2.18, 2.24,2.3,2.36,2.42,2.48,2.54,2.6,2.66,2.72,2.78,2.84]
        con_list=[c,d,e,f,g,a,b, c2,d2,e2,f2,g2,a2,b2,c3,d3,e3,f3,g3,a3,b3, c4,d4,e4,f4,g4,a4,b4, c5,d5,e5,f5,g5,a5,b5, c6,d6,e6,f6,g6,a6,b6]
        dis_list=[disone, disone2, disone3, disone4, disone5, disone6, disone7, disone8,disone9,disone10, disone11, disone12,disone13, disone14,disone15,disone16,disone17,disone18, disone19,disone20,disone21,disone22,disone23,disone24,disone25,disone26,disone27,disone28,disone29,disone30,disone31,disone32,disone33,disone34,disone35,disone36,disone37,disone38,disone39,disone40]
        condition_list=[con_list, dis_list]
      Begin Routine:
        import random
        random.shuffle(c_lower)
        random.shuffle(d_lower)
        random.shuffle(e_lower)
        random.shuffle(f_lower)
        random.shuffle(g_lower)
        random.shuffle(a_lower)
        random.shuffle(c_upper)
        random.shuffle(d_upper)
        random.shuffle(e_upper)
        random.shuffle(f_upper)
        random.shuffle(g_upper)
        random.shuffle(a_upper)
        random.shuffle(b_lower)
        random.shuffle(b_upper)
        random.shuffle(disone_lower)
        random.shuffle(disone_upper)
        random.shuffle(c_lower2)
        random.shuffle(d_lower2)
        random.shuffle(e_lower2)
        random.shuffle(f_lower2)
        random.shuffle(g_lower2)
        random.shuffle(a_lower2)
        random.shuffle(c_upper2)
        random.shuffle(d_upper2)
        random.shuffle(e_upper2)
        random.shuffle(f_upper2)
        random.shuffle(g_upper2)
        random.shuffle(a_upper2)
        random.shuffle(b_lower2)
        random.shuffle(b_upper2)
        random.shuffle(disone_lower2)
        random.shuffle(disone_upper2)
        random.shuffle(c_lower3)
        random.shuffle(d_lower3)
        random.shuffle(e_lower3)
        random.shuffle(f_lower3)
        random.shuffle(g_lower3)
        random.shuffle(a_lower3)
        random.shuffle(c_upper3)
        random.shuffle(d_upper3)
        random.shuffle(e_upper3)
        random.shuffle(f_upper3)
        random.shuffle(g_upper3)
        random.shuffle(a_upper3)
        random.shuffle(b_lower3)
        random.shuffle(b_upper3)
        random.shuffle(disone_lower3)
        random.shuffle(disone_upper3)
        random.shuffle(c_lower4)
        random.shuffle(d_lower4)
        random.shuffle(e_lower4)
        random.shuffle(f_lower4)
        random.shuffle(g_lower4)
        random.shuffle(a_lower4)
        random.shuffle(c_upper4)
        random.shuffle(d_upper4)
        random.shuffle(e_upper4)
        random.shuffle(f_upper4)
        random.shuffle(g_upper4)
        random.shuffle(a_upper4)
        random.shuffle(b_lower4)
        random.shuffle(b_upper4)
        random.shuffle(disone_lower4)
        random.shuffle(disone_upper4)
        random.shuffle(c_lower5)
        random.shuffle(d_lower5)
        random.shuffle(e_lower5)
        random.shuffle(f_lower5)
        random.shuffle(g_lower5)
        random.shuffle(a_lower5)
        random.shuffle(c_upper5)
        random.shuffle(d_upper5)
        random.shuffle(e_upper5)
        random.shuffle(f_upper5)
        random.shuffle(g_upper5)
        random.shuffle(a_upper5)
        random.shuffle(b_lower5)
        random.shuffle(b_upper5)
        random.shuffle(disone_lower5)
        random.shuffle(disone_upper5)
        random.shuffle(c_lower6)
        random.shuffle(d_lower6)
        random.shuffle(e_lower6)
        random.shuffle(f_lower6)
        random.shuffle(g_lower6)
        random.shuffle(a_lower6)
        random.shuffle(c_upper6)
        random.shuffle(d_upper6)
        random.shuffle(e_upper6)
        random.shuffle(f_upper6)
        random.shuffle(g_upper6)
        random.shuffle(a_upper6)
        random.shuffle(b_lower6)
        random.shuffle(b_upper6)
        random.shuffle(disone_lower6)
        random.shuffle(disone_upper6)
        random.shuffle(disone_lower7)
        random.shuffle(disone_upper7)
        random.shuffle(disone_lower8)
        random.shuffle(disone_upper8)
        random.shuffle(disone_lower9)
        random.shuffle(disone_upper9)
        random.shuffle(disone_lower10)
        random.shuffle(disone_upper10)
        random.shuffle(disone_lower11)
        random.shuffle(disone_upper11)
        random.shuffle(disone_lower12)
        random.shuffle(disone_upper12)
        random.shuffle(disone_lower13)
        random.shuffle(disone_upper13)
        random.shuffle(disone_lower14)
        random.shuffle(disone_upper14)
        random.shuffle(disone_lower15)
        random.shuffle(disone_upper15)
        random.shuffle(disone_lower16)
        random.shuffle(disone_upper16)
        random.shuffle(disone_lower17)
        random.shuffle(disone_upper17)
        random.shuffle(disone_lower18)
        random.shuffle(disone_upper18)
        random.shuffle(disone_lower19)
        random.shuffle(disone_upper19)
        random.shuffle(disone_lower20)
        random.shuffle(disone_upper20)
        random.shuffle(disone_lower21)
        random.shuffle(disone_upper21)
        random.shuffle(disone_lower22)
        random.shuffle(disone_upper22)
        random.shuffle(disone_lower23)
        random.shuffle(disone_upper23)
        random.shuffle(disone_lower24)
        random.shuffle(disone_upper24)
        random.shuffle(disone_lower26)
        random.shuffle(disone_upper26)
        random.shuffle(disone_lower25)
        random.shuffle(disone_upper25)
        random.shuffle(disone_lower27)
        random.shuffle(disone_upper27)
        random.shuffle(disone_lower28)
        random.shuffle(disone_upper28)
        random.shuffle(disone_lower29)
        random.shuffle(disone_upper29)
        random.shuffle(disone_lower30)
        random.shuffle(disone_upper30)
        random.shuffle(disone_lower31)
        random.shuffle(disone_upper31)
        random.shuffle(disone_lower32)
        random.shuffle(disone_upper32)
        random.shuffle(disone_lower33)
        random.shuffle(disone_upper33)
        random.shuffle(disone_lower34)
        random.shuffle(disone_upper34)
        random.shuffle(disone_lower35)
        random.shuffle(disone_upper35)
        random.shuffle(disone_lower36)
        random.shuffle(disone_upper36)
        random.shuffle(disone_lower37)
        random.shuffle(disone_upper37)
        random.shuffle(disone_lower38)
        random.shuffle(disone_upper38)
        random.shuffle(disone_lower39)
        random.shuffle(disone_upper39)
        random.shuffle(disone_lower40)
        random.shuffle(disone_upper40)
        random.shuffle(con_list)
        random.shuffle(dis_list)
        random.shuffle(condition_list)
        random.shuffle(starttime)

        if figure==0:
            tarvolume=0
        elif figure==1:
            tarvolume=target_level
        thisExp.addData("tarvolume", tarvolume)
        if target== "wav\C7.wav":
            c_upper.remove("wav\C7.wav")
            f_upper.remove("wav\C7.wav")
            a_upper.remove("wav\C7.wav")
            disone_upper.remove("wav\C7.wav")
            c_upper2.remove("wav\C7.wav")
            f_upper2.remove("wav\C7.wav")
            a_upper2.remove("wav\C7.wav")
            disone_upper2.remove("wav\C7.wav")
            c_upper3.remove("wav\C7.wav")
            f_upper3.remove("wav\C7.wav")
            a_upper3.remove("wav\C7.wav")
            disone_upper3.remove("wav\C7.wav")
            c_upper4.remove("wav\C7.wav")
            f_upper4.remove("wav\C7.wav")
            a_upper4.remove("wav\C7.wav")
            disone_upper4.remove("wav\C7.wav")
            c_upper5.remove("wav\C7.wav")
            f_upper5.remove("wav\C7.wav")
            a_upper5.remove("wav\C7.wav")
            disone_upper5.remove("wav\C7.wav")
            c_upper6.remove("wav\C7.wav")
            f_upper6.remove("wav\C7.wav")
            a_upper6.remove("wav\C7.wav")
            disone_upper6.remove("wav\C7.wav")
            disone_upper7.remove("wav\C7.wav")
            disone_upper8.remove("wav\C7.wav")
            disone_upper9.remove("wav\C7.wav")
            disone_upper10.remove("wav\C7.wav")
            disone_upper11.remove("wav\C7.wav")
            disone_upper12.remove("wav\C7.wav")
            disone_upper13.remove("wav\C7.wav")
            disone_upper14.remove("wav\C7.wav")
            disone_upper15.remove("wav\C7.wav")
            disone_upper16.remove("wav\C7.wav")
            disone_upper17.remove("wav\C7.wav")
            disone_upper18.remove("wav\C7.wav")
            disone_upper19.remove("wav\C7.wav")
            disone_upper20.remove("wav\C7.wav")
            disone_upper21.remove("wav\C7.wav")
            disone_upper22.remove("wav\C7.wav")
            disone_upper23.remove("wav\C7.wav")
            disone_upper24.remove("wav\C7.wav")
            disone_upper25.remove("wav\C7.wav")
            disone_upper26.remove("wav\C7.wav")
            disone_upper27.remove("wav\C7.wav")
            disone_upper28.remove("wav\C7.wav")
            disone_upper29.remove("wav\C7.wav")
            disone_upper30.remove("wav\C7.wav")
            disone_upper31.remove("wav\C7.wav")
            disone_upper32.remove("wav\C7.wav")
            disone_upper33.remove("wav\C7.wav")
            disone_upper34.remove("wav\C7.wav")
            disone_upper35.remove("wav\C7.wav")
            disone_upper36.remove("wav\C7.wav")
            disone_upper37.remove("wav\C7.wav")
            disone_upper38.remove("wav\C7.wav")
            disone_upper39.remove("wav\C7.wav")
            disone_upper40.remove("wav\C7.wav")
        elif target== "wav\D7.wav":
            g_upper.remove("wav\D7.wav")
            g_upper.append(g_lower[0])
            g_lower.remove(g_lower[0])
            b_upper.remove("wav\D7.wav")
            b_upper.append(b_lower[0])
            b_lower.remove(b_lower[0])
            disone_upper.remove("wav\D7.wav")
            g_upper2.remove("wav\D7.wav")
            g_upper2.append(g_lower2[0])
            g_lower2.remove(g_lower2[0])
            b_upper2.remove("wav\D7.wav")
            b_upper2.append(b_lower2[0])
            b_lower2.remove(b_lower2[0])
            disone_upper2.remove("wav\D7.wav")
            g_upper3.remove("wav\D7.wav")
            g_upper3.append(g_lower3[0])
            g_lower3.remove(g_lower3[0])
            b_upper3.remove("wav\D7.wav")
            b_upper3.append(b_lower3[0])
            b_lower3.remove(b_lower3[0])
            disone_upper3.remove("wav\D7.wav")
            g_upper4.remove("wav\D7.wav")
            g_upper4.append(g_lower4[0])
            g_lower4.remove(g_lower4[0])
            b_upper4.remove("wav\D7.wav")
            b_upper4.append(b_lower4[0])
            b_lower4.remove(b_lower4[0])
            disone_upper4.remove("wav\D7.wav")
            g_upper5.remove("wav\D7.wav")
            g_upper5.append(g_lower5[0])
            g_lower5.remove(g_lower5[0])
            b_upper5.remove("wav\D7.wav")
            b_upper5.append(b_lower5[0])
            b_lower5.remove(b_lower5[0])
            disone_upper5.remove("wav\D7.wav")
            g_upper6.remove("wav\D7.wav")
            g_upper6.append(g_lower6[0])
            g_lower6.remove(g_lower6[0])
            b_upper6.remove("wav\D7.wav")
            b_upper6.append(b_lower6[0])
            b_lower6.remove(b_lower6[0])
            disone_upper6.remove("wav\D7.wav")
            disone_upper7.remove("wav\D7.wav")
            disone_upper8.remove("wav\D7.wav")
            disone_upper9.remove("wav\D7.wav")
            disone_upper10.remove("wav\D7.wav")
            disone_upper11.remove("wav\D7.wav")
            disone_upper12.remove("wav\D7.wav")
            disone_upper13.remove("wav\D7.wav")
            disone_upper14.remove("wav\D7.wav")
            disone_upper15.remove("wav\D7.wav")
            disone_upper16.remove("wav\D7.wav")
            disone_upper17.remove("wav\D7.wav")
            disone_upper18.remove("wav\D7.wav")
            disone_upper19.remove("wav\D7.wav")
            disone_upper20.remove("wav\D7.wav")
            disone_upper21.remove("wav\D7.wav")
            disone_upper22.remove("wav\D7.wav")
            disone_upper23.remove("wav\D7.wav")
            disone_upper24.remove("wav\D7.wav")
            disone_upper25.remove("wav\D7.wav")
            disone_upper26.remove("wav\D7.wav")
            disone_upper27.remove("wav\D7.wav")
            disone_upper28.remove("wav\D7.wav")
            disone_upper29.remove("wav\D7.wav")
            disone_upper30.remove("wav\D7.wav")
            disone_upper31.remove("wav\D7.wav")
            disone_upper32.remove("wav\D7.wav")
            disone_upper33.remove("wav\D7.wav")
            disone_upper34.remove("wav\D7.wav")
            disone_upper35.remove("wav\D7.wav")
            disone_upper36.remove("wav\D7.wav")
            disone_upper37.remove("wav\D7.wav")
            disone_upper38.remove("wav\D7.wav")
            disone_upper39.remove("wav\D7.wav")
            disone_upper40.remove("wav\D7.wav")
            d_upper.remove("wav\D7.wav")
            d_upper2.remove("wav\D7.wav")
            d_upper3.remove("wav\D7.wav")
            d_upper4.remove("wav\D7.wav")
            d_upper5.remove("wav\D7.wav")
            d_upper6.remove("wav\D7.wav")

        if background=='con':
            condition_list[0] = con_list
        elif background=='dis':
            condition_list[0] = dis_list

        chord_list=[]
    SoundComponent tar
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 0.62
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent sound1
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][0][0]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_2
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][0][1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_3
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][0][2]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_4
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][0][3]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_5
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][1][0]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_6
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][1][1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_7
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][1][2]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_8
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][1][3]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][0][0]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_2
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][0][1]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_3
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][0][2]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_4
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][0][3]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_5
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][1][0]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_6
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][1][1]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_7
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][1][2]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_8
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][1][3]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound3
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][2][0][0]
      startVal [time (s)] = $starttime[1]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound3_2
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][2][0][1]
      startVal [time (s)] = $starttime[1]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound3_3
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][2][0][2]
      startVal [time (s)] = $starttime[1]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound3_4
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][2][0][3]
      startVal [time (s)] = $starttime[1]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound3_5
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][2][1][0]
      startVal [time (s)] = $starttime[1]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound3_6
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][2][1][1]
      startVal [time (s)] = $starttime[1]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound4
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][3][0][0]
      startVal [time (s)] = $starttime[2]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound5
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][4][0][0]
      startVal [time (s)] = $starttime[3]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound6
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][5][0][0]
      startVal [time (s)] = $starttime[4]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound7
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][6][0][0]
      startVal [time (s)] = $starttime[5]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound8
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][7][0][0]
      startVal [time (s)] = $starttime[6]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound9
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][8][0][0]
      startVal [time (s)] = $starttime[7]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound10
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][9][0][0]
      startVal [time (s)] = $starttime[8]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound11
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][10][0][0]
      startVal [time (s)] = $starttime[9]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound12
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][11][0][0]
      startVal [time (s)] = $starttime[10]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent sound13
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][12][0][0]
      startVal [time (s)] = $starttime[11]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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
    SoundComponent spund16
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][0][0]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_2
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][0][1]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_3
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][0][2]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_4
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][0][3]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_5
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][1][0]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_6
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][1][1]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_7
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][1][2]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_8
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][1][3]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    KeyboardComponent key_resp_3
      allowedKeys = 'l','s'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    SoundComponent tar_2
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 0.68
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_3
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 0.74
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_4
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 0.80
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_5
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 0.86
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_6
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 0.92
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_7
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 0.98
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_8
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 1.04
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_9
      sound [set every repeat] = $target
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_10
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 1.16
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_11
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 1.22
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_12
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 1.28
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_13
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 1.34
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_14
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 1.4
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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
    SoundComponent tar_24
      saveStartStop = False
      sound [set every repeat] = $target
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    SoundComponent tar_31
      sound [set every repeat] = $target
      startVal [time (s)] = 2.42
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = tarvolume
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    PolygonComponent polygon_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      units = deg
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  Routine break_3
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        breakTrials = [47, 95, 143, 191, 239]

        if trials.thisN not in breakTrials:
            continueRoutine = False
    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
            하나의 블록이 끝났습니다.

                      잠시 휴식후,

        실험을 시작하려면 <스페이스바>를 눌러주세요.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine feed
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        for i in range(40):
            condition_list[0][i][0][0]
            condition_list[0][i][0][1]
            condition_list[0][i][0][2]
            condition_list[0][i][0][3]
            condition_list[0][i][1][0]
            condition_list[0][i][1][1]
            condition_list[0][i][1][2]
            condition_list[0][i][1][3]
            chord_list.append(condition_list[0][i][0][0])
            chord_list.append(condition_list[0][i][0][1])
            chord_list.append(condition_list[0][i][0][2])
            chord_list.append(condition_list[0][i][0][3])
            chord_list.append(condition_list[0][i][1][0])
            chord_list.append(condition_list[0][i][1][1])
            chord_list.append(condition_list[0][i][1][2])
            chord_list.append(condition_list[0][i][1][3])


        thisExp.addData("chord_list", chord_list)
      End Routine:
        if target== "wav\C7.wav":
            c_upper.append("wav\C7.wav")
            f_upper.append("wav\C7.wav")
            a_upper.append("wav\C7.wav")
            c_upper2.append("wav\C7.wav")
            f_upper2.append("wav\C7.wav")
            a_upper2.append("wav\C7.wav")
            c_upper3.append("wav\C7.wav")
            f_upper3.append("wav\C7.wav")
            a_upper3.append("wav\C7.wav")
            c_upper4.append("wav\C7.wav")
            f_upper4.append("wav\C7.wav")
            a_upper4.append("wav\C7.wav")
            c_upper5.append("wav\C7.wav")
            f_upper5.append("wav\C7.wav")
            a_upper5.append("wav\C7.wav")
            c_upper6.append("wav\C7.wav")
            f_upper6.append("wav\C7.wav")
            a_upper6.append("wav\C7.wav")
            disone_upper.append("wav\C7.wav")
            disone_upper2.append("wav\C7.wav")
            disone_upper3.append("wav\C7.wav")
            disone_upper4.append("wav\C7.wav")
            disone_upper5.append("wav\C7.wav")
            disone_upper6.append("wav\C7.wav")
            disone_upper7.append("wav\C7.wav")
            disone_upper8.append("wav\C7.wav")
            disone_upper9.append("wav\C7.wav")
            disone_upper10.append("wav\C7.wav")
            disone_upper11.append("wav\C7.wav")
            disone_upper12.append("wav\C7.wav")
            disone_upper13.append("wav\C7.wav")
            disone_upper14.append("wav\C7.wav")
            disone_upper15.append("wav\C7.wav")
            disone_upper16.append("wav\C7.wav")
            disone_upper17.append("wav\C7.wav")
            disone_upper18.append("wav\C7.wav")
            disone_upper19.append("wav\C7.wav")
            disone_upper20.append("wav\C7.wav")
            disone_upper21.append("wav\C7.wav")
            disone_upper22.append("wav\C7.wav")
            disone_upper23.append("wav\C7.wav")
            disone_upper24.append("wav\C7.wav")
            disone_upper25.append("wav\C7.wav")
            disone_upper26.append("wav\C7.wav")
            disone_upper27.append("wav\C7.wav")
            disone_upper28.append("wav\C7.wav")
            disone_upper29.append("wav\C7.wav")
            disone_upper30.append("wav\C7.wav")
            disone_upper31.append("wav\C7.wav")
            disone_upper32.append("wav\C7.wav")
            disone_upper33.append("wav\C7.wav")
            disone_upper34.append("wav\C7.wav")
            disone_upper35.append("wav\C7.wav")
            disone_upper36.append("wav\C7.wav")
            disone_upper37.append("wav\C7.wav")
            disone_upper38.append("wav\C7.wav")
            disone_upper39.append("wav\C7.wav")
            disone_upper40.append("wav\C7.wav")
        elif target== "wav\D7.wav":
            g_lower.append(g_upper[-1])
            g_upper.remove(g_upper[-1])
            g_upper.append("wav\D7.wav")
            b_lower.append(b_upper[-1])
            b_upper.remove(b_upper[-1])
            b_upper.append("wav\D7.wav")
            disone_upper.append("wav\D7.wav")
            g_lower2.append(g_upper2[-1])
            g_upper2.remove(g_upper2[-1])
            g_upper2.append("wav\D7.wav")
            b_lower2.append(b_upper2[-1])
            b_upper2.remove(b_upper2[-1])
            b_upper2.append("wav\D7.wav")
            disone_upper2.append("wav\D7.wav")
            g_lower3.append(g_upper3[-1])
            g_upper3.remove(g_upper3[-1])
            g_upper3.append("wav\D7.wav")
            b_lower3.append(b_upper3[-1])
            b_upper3.remove(b_upper3[-1])
            b_upper3.append("wav\D7.wav")
            disone_upper3.append("wav\D7.wav")
            g_lower4.append(g_upper4[-1])
            g_upper4.remove(g_upper4[-1])
            g_upper4.append("wav\D7.wav")
            b_lower4.append(b_upper4[-1])
            b_upper4.remove(b_upper4[-1])
            b_upper4.append("wav\D7.wav")
            disone_upper4.append("wav\D7.wav")
            g_lower5.append(g_upper5[-1])
            g_upper5.remove(g_upper5[-1])
            g_upper5.append("wav\D7.wav")
            b_lower5.append(b_upper5[-1])
            b_upper5.remove(b_upper5[-1])
            b_upper5.append("wav\D7.wav")
            disone_upper5.append("wav\D7.wav")
            g_lower6.append(g_upper6[-1])
            g_upper6.remove(g_upper6[-1])
            g_upper6.append("wav\D7.wav")
            b_lower6.append(b_upper6[-1])
            b_upper6.remove(b_upper6[-1])
            b_upper6.append("wav\D7.wav")
            disone_upper6.append("wav\D7.wav")
            disone_upper7.append("wav\D7.wav")
            disone_upper8.append("wav\D7.wav")
            disone_upper9.append("wav\D7.wav")
            disone_upper10.append("wav\D7.wav")
            disone_upper11.append("wav\D7.wav")
            disone_upper12.append("wav\D7.wav")
            disone_upper13.append("wav\D7.wav")
            disone_upper14.append("wav\D7.wav")
            disone_upper15.append("wav\D7.wav")
            disone_upper16.append("wav\D7.wav")
            disone_upper17.append("wav\D7.wav")
            disone_upper18.append("wav\D7.wav")
            disone_upper19.append("wav\D7.wav")
            disone_upper20.append("wav\D7.wav")
            disone_upper21.append("wav\D7.wav")
            disone_upper22.append("wav\D7.wav")
            disone_upper23.append("wav\D7.wav")
            disone_upper24.append("wav\D7.wav")
            disone_upper25.append("wav\D7.wav")
            disone_upper26.append("wav\D7.wav")
            disone_upper27.append("wav\D7.wav")
            disone_upper28.append("wav\D7.wav")
            disone_upper29.append("wav\D7.wav")
            disone_upper30.append("wav\D7.wav")
            disone_upper31.append("wav\D7.wav")
            disone_upper32.append("wav\D7.wav")
            disone_upper33.append("wav\D7.wav")
            disone_upper34.append("wav\D7.wav")
            disone_upper35.append("wav\D7.wav")
            disone_upper36.append("wav\D7.wav")
            disone_upper37.append("wav\D7.wav")
            disone_upper38.append("wav\D7.wav")
            disone_upper39.append("wav\D7.wav")
            disone_upper40.append("wav\D7.wav")
            d_upper.append("wav\D7.wav")
            d_upper2.append("wav\D7.wav")
            d_upper3.append("wav\D7.wav")
            d_upper4.append("wav\D7.wav")
            d_upper5.append("wav\D7.wav")
            d_upper6.append("wav\D7.wav")
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine blank
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine exp_ins
    RoutineSettingsComponent exp_ins
      saveStartStop = False
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    TextComponent text_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
                     본 실험입니다.

        여러 화음 중 표적(반복되는 음)이 있다면 < S >키,

        표적(반복되는 음)이 없다면 < L >키를 눌러주세요.

         실험을 시작하려면 <스페이스바>를 눌러주세요.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = The practice session is now complete.
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    CodeComponent code_3
      Code Type = Py
  Routine pra_ins
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    TextComponent text_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
                 This is the practice session.

        If a target (a repeating tone) is present, press <S>,

               If no target is present, press <L>.

          Please respond as accurately as possible.

                Press the spacebar to start.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine blank_2
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    CodeComponent code_7
      Code Type = Py
      Begin Experiment:
        target_level=0.6
      Begin Routine:
        breaks=[48]
        if trials_3.thisN in breaks:
            trials_3.finished = True
    TextComponent text_10
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine pra_feed
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    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        if key_resp_3.corr==1:
            message='correct'
        elif key_resp_3.corr==0:
            message='incorrect'

        for i in range(40):
            condition_list[0][i][0][0]
            condition_list[0][i][0][1]
            condition_list[0][i][0][2]
            condition_list[0][i][0][3]
            condition_list[0][i][1][0]
            condition_list[0][i][1][1]
            condition_list[0][i][1][2]
            condition_list[0][i][1][3]
            chord_list.append(condition_list[0][i][0][0])
            chord_list.append(condition_list[0][i][0][1])
            chord_list.append(condition_list[0][i][0][2])
            chord_list.append(condition_list[0][i][0][3])
            chord_list.append(condition_list[0][i][1][0])
            chord_list.append(condition_list[0][i][1][1])
            chord_list.append(condition_list[0][i][1][2])
            chord_list.append(condition_list[0][i][1][3])


        thisExp.addData("chord_list", chord_list)
      End Routine:
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    TextComponent text_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $message
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Flow
  Routine pra_ins
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = condition_R.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'target': 'wav\\C6.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\D6.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\F6.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\G6.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\A6.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\C7.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\D7.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\A5.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\G5.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\F5.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'},
      {'target': 'wav\\D5.wav', 'tarcategory': 'Cscale', 'background': 'con', 'figure': 1, 'correct': 's', 'relation': 'conrelation'}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
    Routine blank_2
    Routine trial
    Routine pra_feed
  LoopTerminator trials_3
  Routine end
