PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'gender': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = threshold_comsharp_disno
  keyboardBackend = ioHub
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Routines
  Routine thres
    RoutineSettingsComponent thres
      saveStartStop = False
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    SoundComponent tar_39
      saveStartStop = False
      sound [set every repeat] = $target[0][0]
      startVal [time (s)] = 0.62
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = level
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    SoundComponent sound1_9
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][0][0]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_10
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][0][1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_11
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][0][2]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_12
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][0][3]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_13
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][1][0]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_14
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][1][1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_15
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][1][2]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound1_16
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][0][1][3]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_9
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][0][0]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_10
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][0][1]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_11
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][0][2]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_12
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][0][3]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_13
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][1][0]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_14
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][1][1]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_15
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][1][2]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound2_16
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][1][1][3]
      startVal [time (s)] = $starttime[0]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound3_9
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][2][0][0]
      startVal [time (s)] = $starttime[1]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound3_10
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][2][0][1]
      startVal [time (s)] = $starttime[1]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound3_11
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][2][0][2]
      startVal [time (s)] = $starttime[1]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent sound3_12
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][2][0][3]
      startVal [time (s)] = $starttime[1]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_9
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][0][0]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_10
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][0][1]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_11
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][0][2]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_12
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][0][3]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_13
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][1][0]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_14
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][1][1]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_15
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][1][2]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    SoundComponent spund16_16
      saveStartStop = False
      sound [set every repeat] = $condition_list[0][15][1][3]
      startVal [time (s)] = $starttime[14]
      stopVal [duration (s)] = 0.06
      volume = 0.3
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    KeyboardComponent key_resp_5
      allowedKeys = 'up','down'
      correctAns = up
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    SoundComponent tar_40
      saveStartStop = False
      sound [set every repeat] = $target[0][0]
      startVal [time (s)] = 0.68
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = level
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    SoundComponent tar_41
      saveStartStop = False
      sound [set every repeat] = $target[0][0]
      startVal [time (s)] = 0.74
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = level
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    SoundComponent tar_42
      saveStartStop = False
      sound [set every repeat] = $target[0][0]
      startVal [time (s)] = 0.80
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = level
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    SoundComponent tar_43
      saveStartStop = False
      sound [set every repeat] = $target[0][0]
      startVal [time (s)] = 0.86
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = level
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    SoundComponent tar_44
      saveStartStop = False
      sound [set every repeat] = $target[0][0]
      startVal [time (s)] = 0.92
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = level
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    SoundComponent tar_45
      saveStartStop = False
      sound [set every repeat] = $target[0][0]
      startVal [time (s)] = 0.98
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = level
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    SoundComponent tar_46
      saveStartStop = False
      sound [set every repeat] = $target[0][0]
      startVal [time (s)] = 1.04
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = level
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    SoundComponent tar_47
      sound [set every repeat] = $target[0][0]
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = level
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    SoundComponent tar_48
      saveStartStop = False
      sound [set every repeat] = $target[0][0]
      startVal [time (s)] = 1.16
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = level
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    SoundComponent tar_49
      saveStartStop = False
      sound [set every repeat] = $target[0][0]
      startVal [time (s)] = 1.22
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = level
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    SoundComponent tar_50
      saveStartStop = False
      sound [set every repeat] = $target[0][0]
      startVal [time (s)] = 1.28
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = level
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    SoundComponent tar_51
      saveStartStop = False
      sound [set every repeat] = $target[0][0]
      startVal [time (s)] = 1.34
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = level
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    SoundComponent tar_62
      saveStartStop = False
      sound [set every repeat] = $target[0][0]
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = level
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    SoundComponent tar_69
      sound [set every repeat] = $target[0][0]
      startVal [time (s)] = 2.42
      stopVal [duration (s)] = 0.06
      volume [set every repeat] = level
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
    PolygonComponent polygon_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      units = deg
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  Routine thres_feed
    RoutineSettingsComponent thres_feed
      saveStartStop = False
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        for i in range(40):
            condition_list[0][i][0][0]
            condition_list[0][i][0][1]
            condition_list[0][i][0][2]
            condition_list[0][i][0][3]
            condition_list[0][i][1][0]
            condition_list[0][i][1][1]
            condition_list[0][i][1][2]
            condition_list[0][i][1][3]
            chord_list.append(condition_list[0][i][0][0])
            chord_list.append(condition_list[0][i][0][1])
            chord_list.append(condition_list[0][i][0][2])
            chord_list.append(condition_list[0][i][0][3])
            chord_list.append(condition_list[0][i][1][0])
            chord_list.append(condition_list[0][i][1][1])
            chord_list.append(condition_list[0][i][1][2])
            chord_list.append(condition_list[0][i][1][3])

        thisExp.addData("chord_list", chord_list)
        thisExp.addData("target", target[0][0])
      End Routine:
        if condition_list[0]==con_list:
            target_dis.remove(target_dis[0])
        elif condition_list[0]==con_list2:
            target_dis2.remove(target_dis2[0])
        thisExp.addData("con_len2", con_len2)
        thisExp.addData("con_len", con_len)

        if len(con_len) == 12 and condition_list[0]==con_list:
            condition_list.remove(condition_list[0])
        elif len(con_len2) == 12 and condition_list[0]==con_list2:
            condition_list.remove(condition_list[0])
        fre=[23, 47, 71, 95, 119, 143]
        if trials_2.thisTrialN in fre:
            target_dis=["wav\C#6.wav","wav\D#6.wav","wav\F#6.wav","wav\G#6.wav","wav\A#6.wav","wav\C#7.wav","wav\D#7.wav","wav\A#5.wav","wav\G#5.wav","wav\F#5.wav","wav\D#5.wav","wav\C#5.wav"]
            target_dis2=target_dis.copy()
            target=[target_dis,target_dis2]
            condition_list=[con_list, con_list2]
            con_len=[]
            con_len2=[]
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine thre_end
    RoutineSettingsComponent thre_end
      saveStartStop = False
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        target_level = np.median(trials_2.reversalIntensities[-12:])
        thisExp.addData("target_level", target_level)
    TextComponent text_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
                청력 역치 검사를 마쳤습니다.

        본 실험을 시작하려면 <스페이스바>를 눌러주세요.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine break_2
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        import random
        random.shuffle(dis_lo1)
        random.shuffle(dis_up1)
        random.shuffle(dis_lo2)
        random.shuffle(dis_up2)
        random.shuffle(dis_lo3)
        random.shuffle(dis_up3)
        random.shuffle(dis_lo4)
        random.shuffle(dis_up4)
        random.shuffle(dis_lo5)
        random.shuffle(dis_up5)
        random.shuffle(dis_lo6)
        random.shuffle(dis_up6)
        random.shuffle(dis_lo7)
        random.shuffle(dis_up7)
        random.shuffle(dis_lo8)
        random.shuffle(dis_up8)
        random.shuffle(dis_lo9)
        random.shuffle(dis_up9)
        random.shuffle(dis_lo10)
        random.shuffle(dis_up10)
        random.shuffle(dis_lo11)
        random.shuffle(dis_up11)
        random.shuffle(dis_lo12)
        random.shuffle(dis_up12)
        random.shuffle(dis_lo13)
        random.shuffle(dis_up13)
        random.shuffle(dis_lo14)
        random.shuffle(dis_up14)
        random.shuffle(dis_lo15)
        random.shuffle(dis_up15)
        random.shuffle(dis_lo16)
        random.shuffle(dis_up16)
        random.shuffle(dis_lo17)
        random.shuffle(dis_up17)
        random.shuffle(dis_lo18)
        random.shuffle(dis_up18)
        random.shuffle(dis_lo19)
        random.shuffle(dis_up19)
        random.shuffle(dis_lo20)
        random.shuffle(dis_up20)
        random.shuffle(dis_lo21)
        random.shuffle(dis_up21)
        random.shuffle(dis_lo22)
        random.shuffle(dis_up22)
        random.shuffle(dis_lo23)
        random.shuffle(dis_up23)
        random.shuffle(dis_lo24)
        random.shuffle(dis_up24)
        random.shuffle(dis_lo26)
        random.shuffle(dis_up26)
        random.shuffle(dis_lo25)
        random.shuffle(dis_up25)
        random.shuffle(dis_lo27)
        random.shuffle(dis_up27)
        random.shuffle(dis_lo28)
        random.shuffle(dis_up28)
        random.shuffle(dis_lo29)
        random.shuffle(dis_up29)
        random.shuffle(dis_lo30)
        random.shuffle(dis_up30)
        random.shuffle(dis_lo31)
        random.shuffle(dis_up31)
        random.shuffle(dis_lo32)
        random.shuffle(dis_up32)
        random.shuffle(dis_lo33)
        random.shuffle(dis_up33)
        random.shuffle(dis_lo34)
        random.shuffle(dis_up34)
        random.shuffle(dis_lo35)
        random.shuffle(dis_up35)
        random.shuffle(dis_lo36)
        random.shuffle(dis_up36)
        random.shuffle(dis_lo37)
        random.shuffle(dis_up37)
        random.shuffle(dis_lo38)
        random.shuffle(dis_up38)
        random.shuffle(dis_lo39)
        random.shuffle(dis_up39)
        random.shuffle(dis_lo40)
        random.shuffle(dis_up40)
        random.shuffle(dis_list)
        random.shuffle(dis_list2)
        random.shuffle(condition_list)
        random.shuffle(starttime)
        random.shuffle(target_con)
        random.shuffle(target_con2)

        if condition_list[0]==dis_list:
            target[0]=target_con
            dis_len.append(1)
        elif condition_list[0]==dis_list2:
            target[0]=target_con2
            dis_len2.append(1)
        thisExp.addData("target_con", target_con)
        thisExp.addData("target_con2", target_con2)
        thisExp.addData("condition", condition_list[0])



        chord_list=[]
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine break1
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        import random
        random.shuffle(c_lower)
        random.shuffle(d_lower)
        random.shuffle(e_lower)
        random.shuffle(f_lower)
        random.shuffle(g_lower)
        random.shuffle(a_lower)
        random.shuffle(c_upper)
        random.shuffle(d_upper)
        random.shuffle(e_upper)
        random.shuffle(f_upper)
        random.shuffle(g_upper)
        random.shuffle(a_upper)
        random.shuffle(b_lower)
        random.shuffle(b_upper)
        random.shuffle(c_lower2)
        random.shuffle(d_lower2)
        random.shuffle(e_lower2)
        random.shuffle(f_lower2)
        random.shuffle(g_lower2)
        random.shuffle(a_lower2)
        random.shuffle(c_upper2)
        random.shuffle(d_upper2)
        random.shuffle(e_upper2)
        random.shuffle(f_upper2)
        random.shuffle(g_upper2)
        random.shuffle(a_upper2)
        random.shuffle(b_lower2)
        random.shuffle(b_upper2)
        random.shuffle(c_lower3)
        random.shuffle(d_lower3)
        random.shuffle(e_lower3)
        random.shuffle(f_lower3)
        random.shuffle(g_lower3)
        random.shuffle(a_lower3)
        random.shuffle(c_upper3)
        random.shuffle(d_upper3)
        random.shuffle(e_upper3)
        random.shuffle(f_upper3)
        random.shuffle(g_upper3)
        random.shuffle(a_upper3)
        random.shuffle(b_lower3)
        random.shuffle(b_upper3)
        random.shuffle(c_lower4)
        random.shuffle(d_lower4)
        random.shuffle(e_lower4)
        random.shuffle(f_lower4)
        random.shuffle(g_lower4)
        random.shuffle(a_lower4)
        random.shuffle(c_upper4)
        random.shuffle(d_upper4)
        random.shuffle(e_upper4)
        random.shuffle(f_upper4)
        random.shuffle(g_upper4)
        random.shuffle(a_upper4)
        random.shuffle(b_lower4)
        random.shuffle(b_upper4)
        random.shuffle(c_lower5)
        random.shuffle(d_lower5)
        random.shuffle(e_lower5)
        random.shuffle(f_lower5)
        random.shuffle(g_lower5)
        random.shuffle(a_lower5)
        random.shuffle(c_upper5)
        random.shuffle(d_upper5)
        random.shuffle(e_upper5)
        random.shuffle(f_upper5)
        random.shuffle(g_upper5)
        random.shuffle(a_upper5)
        random.shuffle(b_lower5)
        random.shuffle(b_upper5)
        random.shuffle(c_lower6)
        random.shuffle(d_lower6)
        random.shuffle(e_lower6)
        random.shuffle(f_lower6)
        random.shuffle(g_lower6)
        random.shuffle(a_lower6)
        random.shuffle(c_upper6)
        random.shuffle(d_upper6)
        random.shuffle(e_upper6)
        random.shuffle(f_upper6)
        random.shuffle(g_upper6)
        random.shuffle(a_upper6)
        random.shuffle(b_lower6)
        random.shuffle(b_upper6)
        random.shuffle(con_list)
        random.shuffle(con_list2)
        random.shuffle(condition_list)
        random.shuffle(starttime)
        random.shuffle(target)
        random.shuffle(target_dis)
        random.shuffle(target_dis2)
        if condition_list[0]==con_list:
            target[0]=target_dis
            con_len.append(1)
        elif condition_list[0]==con_list2:
            target[0]=target_dis2
            con_len2.append(1)
        thisExp.addData("target_dis", target_dis)
        thisExp.addData("target_dis2", target_dis2)
        thisExp.addData("condition", condition_list[0])



        chord_list=[]
    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine dis_no_feed
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    CodeComponent code_9
      Code Type = Py
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      Begin Routine:
        for i in range(40):
            condition_list[0][i][0][0]
            condition_list[0][i][0][1]
            condition_list[0][i][0][2]
            condition_list[0][i][0][3]
            condition_list[0][i][1][0]
            condition_list[0][i][1][1]
            condition_list[0][i][1][2]
            condition_list[0][i][1][3]
            chord_list.append(condition_list[0][i][0][0])
            chord_list.append(condition_list[0][i][0][1])
            chord_list.append(condition_list[0][i][0][2])
            chord_list.append(condition_list[0][i][0][3])
            chord_list.append(condition_list[0][i][1][0])
            chord_list.append(condition_list[0][i][1][1])
            chord_list.append(condition_list[0][i][1][2])
            chord_list.append(condition_list[0][i][1][3])

        thisExp.addData("chord_list", chord_list)
        thisExp.addData("target", target[0][0])
      End Routine:
        if condition_list[0]==dis_list:
            target_con.remove(target_con[0])
        elif condition_list[0]==dis_list2:
            target_con2.remove(target_con2[0])
        thisExp.addData("dis_len2", dis_len2)
        thisExp.addData("dis_len", dis_len)

        if len(dis_len) == 12 and condition_list[0]==dis_list:
            condition_list.remove(condition_list[0])
        elif len(dis_len2) == 12 and condition_list[0]==dis_list2:
            condition_list.remove(condition_list[0])
        fre=[23, 47, 71, 95, 119, 143]
        if trials.thisTrialN in fre:
            target_con=["wav\C6.wav", "wav\D6.wav","wav\F6.wav","wav\G6.wav","wav\A6.wav","wav\C7.wav","wav\D7.wav","wav\A5.wav","wav\G5.wav","wav\F5.wav","wav\D5.wav","wav\C5.wav"]
            target_con2=target_con.copy()
            target=[target_con,target_con2]
            condition_list=[dis_list, dis_list2]
            dis_len=[]
            dis_len2=[]
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine disno_start
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        target_con_sharp = np.median(trials_2.reversalIntensities[-6:])
        thisExp.addData("target_level_con_sharp", target_con_sharp)
        thisExp.addData("target_level",target_con_sharp)

        target_con=["wav\C6.wav","wav\D6.wav","wav\F6.wav","wav\G6.wav","wav\A6.wav","wav\C7.wav","wav\D7.wav","wav\A5.wav","wav\G5.wav","wav\F5.wav","wav\D5.wav","wav\C5.wav"]
        target_con2=target_con.copy()
        target=[target_con,target_con2]

        for i in range(1,41):
            globals()[f'dis_lo{i}'] = ["wav\D4.wav","wav\E4.wav","wav\F#4.wav","wav\G#4.wav","wav\A#4.wav","wav\C5.wav", "wav\D5.wav","wav\E5.wav","wav\F#5.wav","wav\G#5.wav","wav\A#5.wav", "wav\C6.wav", "wav\D6.wav"]
            globals()[f'dis_up{i}'] = ["wav\E6.wav","wav\F#6.wav","wav\G#6.wav","wav\A#6.wav", "wav\C7.wav", "wav\D7.wav","wav\E7.wav","wav\F#7.wav","wav\G#7.wav","wav\A#7.wav"]

        dis=[dis_lo1,dis_up1]
        dis2=[dis_lo2,dis_up2]
        dis3=[dis_lo3,dis_up3]
        dis4=[dis_lo4,dis_up4]
        dis5=[dis_lo5,dis_up5]
        dis6=[dis_lo6,dis_up6]
        dis7=[dis_lo7,dis_up7]
        dis8=[dis_lo8,dis_up8]
        dis9=[dis_lo9,dis_up9]
        dis10=[dis_lo10,dis_up10]
        dis11=[dis_lo11,dis_up11]
        dis12=[dis_lo12,dis_up12]
        dis13=[dis_lo13,dis_up13]
        dis14=[dis_lo14,dis_up14]
        dis15=[dis_lo15,dis_up15]
        dis16=[dis_lo16,dis_up16]
        dis17=[dis_lo17,dis_up17]
        dis18=[dis_lo18,dis_up18]
        dis19=[dis_lo19,dis_up19]
        dis20=[dis_lo20,dis_up20]
        dis21=[dis_lo21,dis_up21]
        dis22=[dis_lo22,dis_up22]
        dis23=[dis_lo23,dis_up23]
        dis24=[dis_lo24,dis_up24]
        dis25=[dis_lo25,dis_up25]
        dis26=[dis_lo26,dis_up26]
        dis27=[dis_lo27,dis_up27]
        dis28=[dis_lo28,dis_up28]
        dis29=[dis_lo29,dis_up29]
        dis30=[dis_lo30,dis_up30]
        dis31=[dis_lo31,dis_up31]
        dis32=[dis_lo32,dis_up32]
        dis33=[dis_lo33,dis_up33]
        dis34=[dis_lo34,dis_up34]
        dis35=[dis_lo35,dis_up35]
        dis36=[dis_lo36,dis_up36]
        dis37=[dis_lo37,dis_up37]
        dis38=[dis_lo38,dis_up38]
        dis39=[dis_lo39,dis_up39]
        dis40=[dis_lo40,dis_up40]
        dis_len=[]
        dis_len2=[]
        starttime=[0.56,0.62, 0.68, 0.74, 0.80, 0.86, 0.92, 0.98, 1.04, 1.1, 1.16, 1.22,1.28,1.34,1.4,1.46,1.52,1.58,1.64, 1.7, 1.76, 1.82, 1.88, 1.94, 2, 2.06, 2.12,2.18, 2.24,2.3,2.36,2.42,2.48,2.54,2.6,2.66,2.72,2.78,2.84]
        dis_list=[dis, dis2, dis3, dis4, dis5, dis6, dis7, dis8,dis9,dis10, dis11, dis12,dis13, dis14,dis15,dis16,dis17,dis18, dis19,dis20,dis21,dis22,dis23,dis24,dis25,dis26,dis27,dis28,dis29,dis30,dis31,dis32,dis33,dis34,dis35,dis36,dis37,dis38,dis39,dis40]
        dis_list2=[dis, dis2, dis3, dis4, dis5, dis6, dis7, dis8,dis9,dis10, dis11, dis12,dis13, dis14,dis15,dis16,dis17,dis18, dis19,dis20,dis21,dis22,dis23,dis24,dis25,dis26,dis27,dis28,dis29,dis30,dis31,dis32,dis33,dis34,dis35,dis36,dis37,dis38,dis39,dis40]
        condition_list=[dis_list, dis_list2]
    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
                  You have completed one block.

          If you hear a target (a repeating tone), press the <Up> key,
        If you do not hear a target (a repeating tone), press the <Down> key.

              Press the spacebar to start the next block.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consharp
    RoutineSettingsComponent consharp
      saveStartStop = False
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Before the main experiment, you will complete a hearing threshold test.

          If you hear a target (a repeating tone), press the <Up> key,
        If you do not hear a target (a repeating tone), press the <Down> key.

              Press the spacebar to start the next block.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        target_dis=["wav\C#6.wav","wav\D#6.wav","wav\F#6.wav","wav\G#6.wav","wav\A#6.wav","wav\C#7.wav","wav\D#7.wav","wav\A#5.wav","wav\G#5.wav","wav\F#5.wav","wav\D#5.wav","wav\C#5.wav"]
        target_dis2=target_dis.copy()
        c_lower=["wav\E4.wav", "wav\G4.wav", "wav\C5.wav", "wav\E5.wav", "wav\G5.wav","wav\C6.wav"]
        c_upper=["wav\E6.wav", "wav\G6.wav", "wav\C7.wav", "wav\E7.wav", "wav\G7.wav"]
        d_lower=["wav\D4.wav", "wav\D5.wav","wav\D6.wav","wav\F4.wav", "wav\F5.wav", "wav\A4.wav","wav\A5.wav"]
        d_upper=["wav\D7.wav", "wav\F6.wav", "wav\F7.wav", "wav\A6.wav", "wav\A7.wav"]
        e_lower=["wav\E4.wav", "wav\E5.wav", "wav\G4.wav", "wav\G5.wav", "wav\B4.wav", "wav\B5.wav"]
        e_upper=["wav\E6.wav", "wav\E7.wav", "wav\G6.wav", "wav\G7.wav","wav\B6.wav"]
        f_lower=["wav\F4.wav", "wav\F5.wav", "wav\A4.wav", "wav\A5.wav", "wav\C5.wav", "wav\C6.wav"]
        f_upper=["wav\F6.wav", "wav\F7.wav", "wav\A6.wav", "wav\A7.wav", "wav\C7.wav"]
        g_lower=["wav\G4.wav", "wav\G5.wav", "wav\B4.wav", "wav\B5.wav", "wav\D4.wav", "wav\D5.wav", "wav\D6.wav"]
        g_upper=["wav\G6.wav", "wav\G7.wav","wav\B6.wav", "wav\D7.wav"]
        a_lower=["wav\A4.wav", "wav\A5.wav", "wav\C5.wav", "wav\C6.wav", "wav\E4.wav", "wav\E5.wav"]
        a_upper=["wav\A6.wav", "wav\A7.wav",  "wav\C7.wav", "wav\E6.wav", "wav\E7.wav"]
        b_lower=["wav\D4.wav", "wav\D5.wav", "wav\D6.wav", "wav\F4.wav", "wav\F5.wav", "wav\B4.wav", "wav\B5.wav"]
        b_upper=["wav\D7.wav", "wav\F6.wav","wav\F7.wav", "wav\B6.wav"]
        c_lower2=c_lower.copy()
        c_upper2=c_upper.copy()
        d_lower2=d_lower.copy()
        d_upper2=d_upper.copy()
        e_lower2=e_lower.copy()
        e_upper2=e_upper.copy()
        f_lower2=f_lower.copy()
        f_upper2=f_upper.copy()
        g_lower2=g_lower.copy()
        g_upper2=g_upper.copy()
        a_lower2=a_lower.copy()
        a_upper2=a_upper.copy()
        b_lower2=b_lower.copy()
        b_upper2=b_upper.copy()
        c_lower3=c_lower.copy()
        c_upper3=c_upper.copy()
        d_lower3=d_lower.copy()
        d_upper3=d_upper.copy()
        e_lower3=e_lower.copy()
        e_upper3=e_upper.copy()
        f_lower3=f_lower.copy()
        f_upper3=f_upper.copy()
        g_lower3=g_lower.copy()
        g_upper3=g_upper.copy()
        a_lower3=a_lower.copy()
        a_upper3=a_upper.copy()
        b_lower3=b_lower.copy()
        b_upper3=b_upper.copy()
        c_lower4=c_lower.copy()
        c_upper4=c_upper.copy()
        d_lower4=d_lower.copy()
        d_upper4=d_upper.copy()
        e_lower4=e_lower.copy()
        e_upper4=e_upper.copy()
        f_lower4=f_lower.copy()
        f_upper4=f_upper.copy()
        g_lower4=g_lower.copy()
        g_upper4=g_upper.copy()
        a_lower4=a_lower.copy()
        a_upper4=a_upper.copy()
        b_lower4=b_lower.copy()
        b_upper4=b_upper.copy()
        c_lower5=c_lower.copy()
        c_upper5=c_upper.copy()
        d_lower5=d_lower.copy()
        d_upper5=d_upper.copy()
        e_lower5=e_lower.copy()
        e_upper5=e_upper.copy()
        f_lower5=f_lower.copy()
        f_upper5=f_upper.copy()
        g_lower5=g_lower.copy()
        g_upper5=g_upper.copy()
        a_lower5=a_lower.copy()
        a_upper5=a_upper.copy()
        b_lower5=b_lower.copy()
        b_upper5=b_upper.copy()
        c_lower6=c_lower.copy()
        c_upper6=c_upper.copy()
        d_lower6=d_lower.copy()
        d_upper6=d_upper.copy()
        e_lower6=e_lower.copy()
        e_upper6=e_upper.copy()
        f_lower6=f_lower.copy()
        f_upper6=f_upper.copy()
        g_lower6=g_lower.copy()
        g_upper6=g_upper.copy()
        a_lower6=a_lower.copy()
        a_upper6=a_upper.copy()
        b_lower6=b_lower.copy()
        b_upper6=b_upper.copy()
        c=[c_lower,c_upper]
        d=[d_lower,d_upper]
        e=[e_lower,e_upper]
        f=[f_lower,f_upper]
        g=[g_lower,g_upper]
        a=[a_lower,a_upper]
        b=[b_lower,b_upper]
        c2=[c_lower2,c_upper2]
        d2=[d_lower2,d_upper2]
        e2=[e_lower2,e_upper2]
        f2=[f_lower2,f_upper2]
        g2=[g_lower2,g_upper2]
        a2=[a_lower2,a_upper2]
        b2=[b_lower2,b_upper2]
        c3=[c_lower3,c_upper3]
        d3=[d_lower3,d_upper3]
        e3=[e_lower3,e_upper3]
        f3=[f_lower3,f_upper3]
        g3=[g_lower3,g_upper3]
        a3=[a_lower3,a_upper3]
        b3=[b_lower3,b_upper3]
        c4=[c_lower4,c_upper4]
        d4=[d_lower4,d_upper4]
        e4=[e_lower4,e_upper4]
        f4=[f_lower4,f_upper4]
        g4=[g_lower4,g_upper4]
        a4=[a_lower4,a_upper4]
        b4=[b_lower4,b_upper4]
        c5=[c_lower5,c_upper5]
        d5=[d_lower5,d_upper5]
        e5=[e_lower5,e_upper5]
        f5=[f_lower5,f_upper5]
        g5=[g_lower5,g_upper5]
        a5=[a_lower5,a_upper5]
        b5=[b_lower5,b_upper5]
        c6=[c_lower6,c_upper6]
        d6=[d_lower6,d_upper6]
        e6=[e_lower6,e_upper6]
        f6=[f_lower6,f_upper6]
        g6=[g_lower6,g_upper6]
        a6=[a_lower6,a_upper6]
        b6=[b_lower6,b_upper6]
        target=[target_dis,target_dis2]
        starttime=[0.56,0.62, 0.68, 0.74, 0.80, 0.86, 0.92, 0.98, 1.04, 1.1, 1.16, 1.22,1.28,1.34,1.4,1.46,1.52,1.58,1.64, 1.7, 1.76, 1.82, 1.88, 1.94, 2, 2.06, 2.12,2.18, 2.24,2.3,2.36,2.42,2.48,2.54,2.6,2.66,2.72,2.78,2.84]
        con_list=[c,d,e,f,g,a,b, c2,d2,e2,f2,g2,a2,b2,c3,d3,e3,f3,g3,a3,b3, c4,d4,e4,f4,g4,a4,b4, c5,d5,e5,f5,g5,a5,b5, c6,d6,e6,f6,g6,a6,b6]
        con_list2=[c,d,e,f,g,a,b, c2,d2,e2,f2,g2,a2,b2,c3,d3,e3,f3,g3,a3,b3, c4,d4,e4,f4,g4,a4,b4, c5,d5,e5,f5,g5,a5,b5, c6,d6,e6,f6,g6,a6,b6]
        condition_list=[con_list, con_list2]
        con_len=[]
        con_len2=[]
  Routine bre_conno
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        import random
        random.shuffle(c_lo1)
        random.shuffle(d_lo1)
        random.shuffle(e_lo1)
        random.shuffle(f_lo1)
        random.shuffle(g_lo1)
        random.shuffle(a_lo1)
        random.shuffle(c_up1)
        random.shuffle(d_up1)
        random.shuffle(e_up1)
        random.shuffle(f_up1)
        random.shuffle(g_up1)
        random.shuffle(a_up1)
        random.shuffle(b_lo1)
        random.shuffle(b_up1)
        random.shuffle(c_lo2)
        random.shuffle(d_lo2)
        random.shuffle(e_lo2)
        random.shuffle(f_lo2)
        random.shuffle(g_lo2)
        random.shuffle(a_lo2)
        random.shuffle(c_up2)
        random.shuffle(d_up2)
        random.shuffle(e_up2)
        random.shuffle(f_up2)
        random.shuffle(g_up2)
        random.shuffle(a_up2)
        random.shuffle(b_lo2)
        random.shuffle(b_up2)
        random.shuffle(c_lo3)
        random.shuffle(d_lo3)
        random.shuffle(e_lo3)
        random.shuffle(f_lo3)
        random.shuffle(g_lo3)
        random.shuffle(a_lo3)
        random.shuffle(c_up3)
        random.shuffle(d_up3)
        random.shuffle(e_up3)
        random.shuffle(f_up3)
        random.shuffle(g_up3)
        random.shuffle(a_up3)
        random.shuffle(b_lo3)
        random.shuffle(b_up3)
        random.shuffle(c_lo4)
        random.shuffle(d_lo4)
        random.shuffle(e_lo4)
        random.shuffle(f_lo4)
        random.shuffle(g_lo4)
        random.shuffle(a_lo4)
        random.shuffle(c_up4)
        random.shuffle(d_up4)
        random.shuffle(e_up4)
        random.shuffle(f_up4)
        random.shuffle(g_up4)
        random.shuffle(a_up4)
        random.shuffle(b_lo4)
        random.shuffle(b_up4)
        random.shuffle(c_lo5)
        random.shuffle(d_lo5)
        random.shuffle(e_lo5)
        random.shuffle(f_lo5)
        random.shuffle(g_lo5)
        random.shuffle(a_lo5)
        random.shuffle(c_up5)
        random.shuffle(d_up5)
        random.shuffle(e_up5)
        random.shuffle(f_up5)
        random.shuffle(g_up5)
        random.shuffle(a_up5)
        random.shuffle(b_lo5)
        random.shuffle(b_up5)
        random.shuffle(c_lo6)
        random.shuffle(d_lo6)
        random.shuffle(e_lo6)
        random.shuffle(f_lo6)
        random.shuffle(g_lo6)
        random.shuffle(a_lo6)
        random.shuffle(c_up6)
        random.shuffle(d_up6)
        random.shuffle(e_up6)
        random.shuffle(f_up6)
        random.shuffle(g_up6)
        random.shuffle(a_up6)
        random.shuffle(b_lo6)
        random.shuffle(b_up6)
        random.shuffle(con_list)
        random.shuffle(con_list2)
        random.shuffle(condition_list)
        random.shuffle(starttime)
        random.shuffle(target_con3)
        random.shuffle(target_con4)
        random.shuffle(target)
        if condition_list[0]==con_list:
            target[0]=target_con3
            con_len3.append(1)
        elif condition_list[0]==con_list2:
            target[0]=target_con4
            con_len4.append(1)
        thisExp.addData("target_con3", target_con3)
        thisExp.addData("target_con4", target_con4)
        thisExp.addData("condition", condition_list[0])



        chord_list=[]
  Routine conno_start
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        target_level_dis_no = np.median(trials.reversalIntensities[-6:])
        thisExp.addData("target_level_dis_no", target_level_dis_no)
        thisExp.addData("target_level",target_level_dis_no)
    TextComponent text_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The test is now complete.
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine conno_feed
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    CodeComponent code_11
      Code Type = Py
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      Begin Routine:
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      End Routine:
        if condition_list[0]==con_list:
            target_con3.remove(target_con3[0])
        elif condition_list[0]==con_list2:
            target_con4.remove(target_con4[0])
        thisExp.addData("con_len3", con_len3)
        thisExp.addData("con_len4", con_len4)

        if len(con_len3) == 12 and condition_list[0]==con_list:
            condition_list.remove(condition_list[0])
        elif len(con_len4) == 12 and condition_list[0]==con_list2:
            condition_list.remove(condition_list[0])
        fre=[47, 95, 143]
        if trials_3.thisTrialN in fre:
            target_con3=["wav\C6.wav","wav\D6.wav","wav\F6.wav","wav\G6.wav","wav\A6.wav","wav\C7.wav","wav\D7.wav","wav\A5.wav","wav\G5.wav","wav\F5.wav","wav\D5.wav","wav\C5.wav"]
            target_con4=target_con3.copy()
            target=[target_con3,target_con4]
            condition_list=[con_list, con_list2]
            con_len3=[]
            con_len4=[]
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine dissharp
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    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        target_level_con_no = np.median(trials_3.reversalIntensities[-3:])
        thisExp.addData("target_level_con_no", target_level_con_no)
        target_level= np.median(trials_3.reversalIntensities[-3:])
        thisExp.addData("target_level",target_level)
        target_dis3=["wav\C#6.wav","wav\D#6.wav","wav\F#6.wav","wav\G#6.wav","wav\A#6.wav","wav\C#7.wav","wav\D#7.wav","wav\A#5.wav","wav\G#5.wav","wav\F#5.wav","wav\D#5.wav","wav\C#5.wav"]
        target_dis4=target_dis3.copy()
        target=[target_dis3,target_dis4]
        for i in range(1,41):
            globals()[f'dis_lo{i}'] = ["wav\D4.wav","wav\E4.wav","wav\F#4.wav","wav\G#4.wav","wav\A#4.wav","wav\C5.wav", "wav\D5.wav","wav\E5.wav","wav\F#5.wav","wav\G#5.wav","wav\A#5.wav", "wav\C6.wav", "wav\D6.wav"]
            globals()[f'dis_up{i}'] = ["wav\E6.wav","wav\F#6.wav","wav\G#6.wav","wav\A#6.wav", "wav\C7.wav", "wav\D7.wav","wav\E7.wav","wav\F#7.wav","wav\G#7.wav","wav\A#7.wav"]

        dis=[dis_lo1,dis_up1]
        dis2=[dis_lo2,dis_up2]
        dis3=[dis_lo3,dis_up3]
        dis4=[dis_lo4,dis_up4]
        dis5=[dis_lo5,dis_up5]
        dis6=[dis_lo6,dis_up6]
        dis7=[dis_lo7,dis_up7]
        dis8=[dis_lo8,dis_up8]
        dis9=[dis_lo9,dis_up9]
        dis10=[dis_lo10,dis_up10]
        dis11=[dis_lo11,dis_up11]
        dis12=[dis_lo12,dis_up12]
        dis13=[dis_lo13,dis_up13]
        dis14=[dis_lo14,dis_up14]
        dis15=[dis_lo15,dis_up15]
        dis16=[dis_lo16,dis_up16]
        dis17=[dis_lo17,dis_up17]
        dis18=[dis_lo18,dis_up18]
        dis19=[dis_lo19,dis_up19]
        dis20=[dis_lo20,dis_up20]
        dis21=[dis_lo21,dis_up21]
        dis22=[dis_lo22,dis_up22]
        dis23=[dis_lo23,dis_up23]
        dis24=[dis_lo24,dis_up24]
        dis25=[dis_lo25,dis_up25]
        dis26=[dis_lo26,dis_up26]
        dis27=[dis_lo27,dis_up27]
        dis28=[dis_lo28,dis_up28]
        dis29=[dis_lo29,dis_up29]
        dis30=[dis_lo30,dis_up30]
        dis31=[dis_lo31,dis_up31]
        dis32=[dis_lo32,dis_up32]
        dis33=[dis_lo33,dis_up33]
        dis34=[dis_lo34,dis_up34]
        dis35=[dis_lo35,dis_up35]
        dis36=[dis_lo36,dis_up36]
        dis37=[dis_lo37,dis_up37]
        dis38=[dis_lo38,dis_up38]
        dis39=[dis_lo39,dis_up39]
        dis40=[dis_lo40,dis_up40]
        dis_len3=[]
        dis_len4=[]
        starttime=[0.56,0.62, 0.68, 0.74, 0.80, 0.86, 0.92, 0.98, 1.04, 1.1, 1.16, 1.22,1.28,1.34,1.4,1.46,1.52,1.58,1.64, 1.7, 1.76, 1.82, 1.88, 1.94, 2, 2.06, 2.12,2.18, 2.24,2.3,2.36,2.42,2.48,2.54,2.6,2.66,2.72,2.78,2.84]
        dis_list=[dis, dis2, dis3, dis4, dis5, dis6, dis7, dis8,dis9,dis10, dis11, dis12,dis13, dis14,dis15,dis16,dis17,dis18, dis19,dis20,dis21,dis22,dis23,dis24,dis25,dis26,dis27,dis28,dis29,dis30,dis31,dis32,dis33,dis34,dis35,dis36,dis37,dis38,dis39,dis40]
        dis_list2=[dis, dis2, dis3, dis4, dis5, dis6, dis7, dis8,dis9,dis10, dis11, dis12,dis13, dis14,dis15,dis16,dis17,dis18, dis19,dis20,dis21,dis22,dis23,dis24,dis25,dis26,dis27,dis28,dis29,dis30,dis31,dis32,dis33,dis34,dis35,dis36,dis37,dis38,dis39,dis40]
        condition_list=[dis_list, dis_list2]
    TextComponent text_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
                  한 블록를 마쳤습니다.

        여러 화음 중 표적(반복되는 음)이 들린다면 < up >키를,
        표적(반복되는 음)이 들리지 않는다면 < down >키를 눌러주세요.

         다음 블록을 시작하려면 <스페이스바>를 눌러주세요.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine bre_dissharp
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        import random
        random.shuffle(dis_lo1)
        random.shuffle(dis_up1)
        random.shuffle(dis_lo2)
        random.shuffle(dis_up2)
        random.shuffle(dis_lo3)
        random.shuffle(dis_up3)
        random.shuffle(dis_lo4)
        random.shuffle(dis_up4)
        random.shuffle(dis_lo5)
        random.shuffle(dis_up5)
        random.shuffle(dis_lo6)
        random.shuffle(dis_up6)
        random.shuffle(dis_lo7)
        random.shuffle(dis_up7)
        random.shuffle(dis_lo8)
        random.shuffle(dis_up8)
        random.shuffle(dis_lo9)
        random.shuffle(dis_up9)
        random.shuffle(dis_lo10)
        random.shuffle(dis_up10)
        random.shuffle(dis_lo11)
        random.shuffle(dis_up11)
        random.shuffle(dis_lo12)
        random.shuffle(dis_up12)
        random.shuffle(dis_lo13)
        random.shuffle(dis_up13)
        random.shuffle(dis_lo14)
        random.shuffle(dis_up14)
        random.shuffle(dis_lo15)
        random.shuffle(dis_up15)
        random.shuffle(dis_lo16)
        random.shuffle(dis_up16)
        random.shuffle(dis_lo17)
        random.shuffle(dis_up17)
        random.shuffle(dis_lo18)
        random.shuffle(dis_up18)
        random.shuffle(dis_lo19)
        random.shuffle(dis_up19)
        random.shuffle(dis_lo20)
        random.shuffle(dis_up20)
        random.shuffle(dis_lo21)
        random.shuffle(dis_up21)
        random.shuffle(dis_lo22)
        random.shuffle(dis_up22)
        random.shuffle(dis_lo23)
        random.shuffle(dis_up23)
        random.shuffle(dis_lo24)
        random.shuffle(dis_up24)
        random.shuffle(dis_lo26)
        random.shuffle(dis_up26)
        random.shuffle(dis_lo25)
        random.shuffle(dis_up25)
        random.shuffle(dis_lo27)
        random.shuffle(dis_up27)
        random.shuffle(dis_lo28)
        random.shuffle(dis_up28)
        random.shuffle(dis_lo29)
        random.shuffle(dis_up29)
        random.shuffle(dis_lo30)
        random.shuffle(dis_up30)
        random.shuffle(dis_lo31)
        random.shuffle(dis_up31)
        random.shuffle(dis_lo32)
        random.shuffle(dis_up32)
        random.shuffle(dis_lo33)
        random.shuffle(dis_up33)
        random.shuffle(dis_lo34)
        random.shuffle(dis_up34)
        random.shuffle(dis_lo35)
        random.shuffle(dis_up35)
        random.shuffle(dis_lo36)
        random.shuffle(dis_up36)
        random.shuffle(dis_lo37)
        random.shuffle(dis_up37)
        random.shuffle(dis_lo38)
        random.shuffle(dis_up38)
        random.shuffle(dis_lo39)
        random.shuffle(dis_up39)
        random.shuffle(dis_lo40)
        random.shuffle(dis_up40)
        random.shuffle(dis_list)
        random.shuffle(dis_list2)
        random.shuffle(condition_list)
        random.shuffle(starttime)
        random.shuffle(target_dis3)
        random.shuffle(target_dis4)

        if condition_list[0]==dis_list:
            target[0]=target_dis3
            dis_len3.append(1)
        elif condition_list[0]==dis_list2:
            target[0]=target_dis4
            dis_len4.append(1)
        thisExp.addData("target_dis3", target_dis3)
        thisExp.addData("target_dis4", target_dis4)
        thisExp.addData("condition", condition_list[0])



        chord_list=[]
    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine dissharp_feed
    RoutineSettingsComponent dissharp_feed
      saveStartStop = False
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    CodeComponent code_13
      Code Type = Py
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      Begin Routine:
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      End Routine:
        if condition_list[0]==dis_list:
            target_dis3.remove(target_dis3[0])
        elif condition_list[0]==dis_list2:
            target_dis4.remove(target_dis4[0])
        thisExp.addData("dis_len3", dis_len3)
        thisExp.addData("dis_len4", dis_len4)

        if len(dis_len3) == 12 and condition_list[0]==dis_list:
            condition_list.remove(condition_list[0])
        elif len(dis_len4) == 12 and condition_list[0]==dis_list2:
            condition_list.remove(condition_list[0])
        fre=[23, 47, 71, 95, 119, 143]
        if trials_4.thisTrialN in fre:
            target_dis3=["wav\C#6.wav","wav\D#6.wav","wav\F#6.wav","wav\G#6.wav","wav\A#6.wav","wav\C#7.wav","wav\D#7.wav","wav\A#5.wav","wav\G#5.wav","wav\F#5.wav","wav\D#5.wav","wav\C#5.wav"]
            target_dis4=target_dis.copy()
            target=[target_dis3,target_dis4]
            condition_list=[dis_list, dis_list2]
            dis_len3=[]
            dis_len4=[]
    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine dissharp_end
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    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        target_dis_sharp = np.median(trials_4.reversalIntensities[-3:])
        target_level= np.median(trials_4.reversalIntensities[-3:])
        thisExp.addData("target_level_dis_sharp", target_dis_sharp)
        thres_target_level=numpy.mean(target_level)
        thisExp.addData(thres_target_level)
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_14
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
                   검사를 마쳤습니다.

        본 실험을 시작하려면 <스페이스바>를 눌러주세요.
Flow
  Routine consharp
  LoopInitiator trials_2 loopType="StairHandler"
    N down = 2
    N reversals = 10
    N up = 1
    loopType = staircase
    max value = 1
    min value = 0
    nReps = 20
    start value = 0.6
    step sizes = [2,2,2,0.5]
    step type = db
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    Routine break1
    Routine thres
    Routine thres_feed
  LoopTerminator trials_2
  Routine disno_start
  LoopInitiator trials loopType="StairHandler"
    N down = 2
    N reversals = 10
    N up = 1
    loopType = staircase
    max value = 1
    min value = 0
    nReps = 20
    start value = 0.6
    step sizes = [2,2,2,0.5]
    step type = db
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    Routine break_2
    Routine thres
    Routine dis_no_feed
  LoopTerminator trials
  Routine conno_start
